---
API: 3
OpenSesame: 4.0.24
Platform: nt
---
set width 1366
set title CRFT
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend xpyriment
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 22
set font_italic False
set font_family Arial
set font_bold False
set experiment_path "C:\\Users\\c7201264\\OneDrive\\10_Paper\\105_MIA\\03_Platform\\CRFT\\OpenSesame-local"
set disable_garbage_collection False
set description "The main experiment item"
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set background white

define sequence CC_instruction_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run present_instr_1 True
	run present_instr_2 True
	run present_instr_3_4 True
	run present_CC_check True

define sequence CRFT_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run init_targets_geometry True
	run block_loop True

define inline_script age
	set description "Executes Python code"
	___run__
	# Create the form
	form = Form(
	    cols=[1] * 10,
	    rows=[1] * 9,
	    margins=(40, 90, 40, 80),
	    spacing=20
	)
	
	# Title label (assumes var.age_item was set previously)
	labelTitle = Label(text="{age_item}", center = True)
	form.set_widget(labelTitle, (0,0), colspan=10)
	
	# Create age buttons from 6 to 85
	ages = list(range(6, 86))  # 6–85 inclusive
	
	start_row = 1  # row 0 is used by the title
	
	for i, age_value in enumerate(ages):
	    col = i % 10
	    row = start_row + (i // 10)
	
	    btn = Button(
	        text=str(age_value)
	    )
	
	    form.set_widget(btn, (int(col), int(row)))
	
	# Run the form and store the response
	age = form._exec()
	age = int(age)
	__end__
	set _prepare ""

define loop block_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 n_testbl 1
	setcycle 1 n_testbl 2
	run block_sequence

define sequence block_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run init_block True
	run cc_instruction_loop True
	run gotopractice_sequence True
	run practice_loop True
	run present_testbl_instr True
	run test_loop True
	run present_new_condition "n_testbl == 1"

define feedback bye
	set reset_variables yes
	set duration 2995
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=True text="{bye_msg}" x=0 y=0 z_index=0

define loop cc_instruction_loop
	set source_file ""
	set source table
	set repeat 99
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first no
	set break_if "CC_correct == 1"
	setcycle 0 empty_column ""
	run CC_instruction_sequence

define sequence demographics_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run age True
	run sex True
	run handedness True
	run eval_demographics True

define inline_script eval_demographics
	set description "Executes Python code"
	___run__
	# translate responses back into uniform code independent of language
	
	# handedness
	if handedness == handedness_l:
	    handedness = "l"   # left
	elif handedness == handedness_r:
	    handedness = "r"   # right
	elif handedness == handedness_b:
	    handedness = "b"   # both
	
	# sex
	if sex == sex_f:
	    sex = "f"          # female
	elif sex == sex_m:
	    sex = "m"          # male
	elif sex == sex_d:
	    sex = "d"          # diverse
	
	# debug
	print('sex:', sex)
	print('age:', age)
	print('handedness:', handedness)
	__end__
	set _prepare ""

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run preparations True
	run init_localiser True
	run experiment_settings True
	run init_experiment_settings True
	run init_messages True
	run init_demographics True
	run demographics_sequence True
	run present_stylus_instr True
	run famil_sequence "selected_familiarization == \"Yes\""
	run CRFT_sequence True
	run bye True

define sequence experiment_settings
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run famil_task True
	run order True
	run ids True
	run n_reps True
	run language_localiser True

define sequence famil_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run present_famil_instr True
	run familiarization_task True

define form_multiple_choice famil_task
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	Yes
	No
	__end__
	set margins "50;50;50;50"
	set form_var selected_familiarization
	set form_title "Choose whether to include a familiarization task requiring a touchscreen:"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define inline_script familiarization_task
	set description "Executes Python code"
	___run__
	import random
	import math
	
	# ============================================================
	# Familiarization task
	# - 70 sequential targets
	# - fixed random order
	# - balanced across target sizes
	# - next target appears after first stylus contact
	# - repeated signals from the same physical touch are debounced
	# - targets never clipped by screen edge
	# - no instruction screen before the task
	# - final feedback: feedback_fam + percent correct
	# - feedback is shown for at least 2 s
	# - bottom-right next button
	# - compatible with OpenSesame 4.0.24, xpyriment backend
	# ============================================================
	
	# ------------------------------------------------------------
	# settings
	# ------------------------------------------------------------
	TARGET_COLOR = '#7f7f7f'
	TEXT_COLOR = foreground if 'foreground' in globals() else 'black'
	BG_COLOR = background if 'background' in globals() else 'white'
	
	N_TARGETS = 70
	FAM_SEED = 20260402
	
	# Timing
	min_feedback_duration = 2000  # ms
	
	# Reference screen height for scaling
	REF_HEIGHT = 768.0
	scale = float(height) / REF_HEIGHT
	
	screen_w = int(width)
	screen_h = int(height)
	
	# Smaller CRFT-like diameter range
	# max size reduced from 224 to 160
	ref_diameters = [14, 20, 28, 40, 56, 80, 112, 140, 160, 160]
	target_diameters = [max(10, int(round(d * scale))) for d in ref_diameters]
	
	# Safety margin so targets are fully visible
	extra_margin = int(round(20 * scale))
	
	# Minimum jump distance between consecutive targets
	min_jump_distance = int(round(80 * scale))
	
	random.seed(FAM_SEED)
	
	# ------------------------------------------------------------
	# button / feedback layout
	# ------------------------------------------------------------
	margin = int(round(48 * scale))
	
	feedback_font_size = int(round(36 * scale))
	feedback_font_size = max(24, min(48, feedback_font_size))
	
	button_font_size = int(round(20 * scale))
	button_font_size = max(14, min(26, button_font_size))
	
	button_pad_x = int(round(20 * scale))
	button_pad_y = int(round(10 * scale))
	
	# Uni Innsbruck style
	uibk_orange = '#f39200'
	button_fill_enabled = '#fff7ed'   # light orange / cream
	button_fill_disabled = '#e6e6e6'
	button_border_enabled = uibk_orange
	button_border_disabled = '#999999'
	button_text_color = 'black'
	
	# ------------------------------------------------------------
	# input devices
	# ------------------------------------------------------------
	mouse = Mouse(buttonlist=[1], timeout=None, visible=False)
	
	try:
	    mouse.show_cursor(False)
	except Exception:
	    pass
	
	kb = Keyboard(keylist=['escape'], timeout=None)
	
	# ------------------------------------------------------------
	# helpers
	# ------------------------------------------------------------
	def clean_html(text):
	    """Keep HTML, but remove leading/trailing whitespace."""
	    return str(text).replace('\n', ' ').strip()
	
	
	def inside_circle(x, y, cx, cy, r):
	    return ((x - cx) ** 2 + (y - cy) ** 2) <= (r ** 2)
	
	
	def point_in_rect(pos, x, y, w, h):
	    """Check whether a touch position is inside a rectangle."""
	    if pos is None:
	        return False
	    px, py = pos
	    return (x <= px <= x + w) and (y <= py <= y + h)
	
	
	# ------------------------------------------------------------
	# stylus / touch first-contact detection
	# ------------------------------------------------------------
	TOUCH_DEBOUNCE_MS = 120
	TOUCH_SAME_TOUCH_MS = 700
	TOUCH_SAME_POS_PX = 15
	
	
	def make_touch_state():
	    """Create state for first-contact stylus detection."""
	    return {
	        'was_down': bool(mouse.get_pressed()[0]),
	        'last_time': None,
	        'last_pos': None
	    }
	
	
	def is_duplicate_touch(state, pos, ts):
	    """Avoid logging the same physical touch more than once."""
	    if state['last_time'] is None or state['last_pos'] is None:
	        return False
	
	    dt = ts - state['last_time']
	    dx = pos[0] - state['last_pos'][0]
	    dy = pos[1] - state['last_pos'][1]
	    dist = (dx ** 2 + dy ** 2) ** 0.5
	
	    if dt < TOUCH_DEBOUNCE_MS:
	        return True
	
	    if dt < TOUCH_SAME_TOUCH_MS and dist < TOUCH_SAME_POS_PX:
	        return True
	
	    return False
	
	
	def get_first_touch(state):
	    """
	    Return the first stylus contact position/time.
	    Returns (None, None) if no new valid touch occurred.
	    """
	    pressed_now = bool(mouse.get_pressed()[0])
	
	    if pressed_now and not state['was_down']:
	        raw_pos = mouse.get_pos()
	        ts = clock.time()
	
	        # OpenSesame/xpyriment may return either:
	        #   (x, y)
	        # or:
	        #   ((x, y), timestamp)
	        if isinstance(raw_pos, tuple) and len(raw_pos) == 2:
	            if isinstance(raw_pos[0], tuple) and len(raw_pos[0]) == 2:
	                pos = raw_pos[0]
	            else:
	                pos = raw_pos
	        else:
	            pos = raw_pos
	
	        pos = (int(pos[0]), int(pos[1]))
	
	        if not is_duplicate_touch(state, pos, ts):
	            state['last_time'] = ts
	            state['last_pos'] = pos
	            state['was_down'] = pressed_now
	            return pos, ts
	
	    state['was_down'] = pressed_now
	    return None, None
	
	
	def random_position_for_radius(r, prev_pos=None, min_dist=0):
	    """Return a random target position that is not clipped by the screen edge."""
	    xmin = -int(width / 2) + r + extra_margin
	    xmax =  int(width / 2) - r - extra_margin
	    ymin = -int(height / 2) + r + extra_margin
	    ymax =  int(height / 2) - r - extra_margin
	
	    for _ in range(1000):
	        x = random.randint(xmin, xmax)
	        y = random.randint(ymin, ymax)
	
	        if prev_pos is not None:
	            dx = x - prev_pos[0]
	            dy = y - prev_pos[1]
	
	            if math.sqrt(dx * dx + dy * dy) < min_dist:
	                continue
	
	        return x, y
	
	    # Fallback if no suitable position is found
	    return 0, 0
	
	
	def draw_target(cx, cy, r):
	    c = Canvas()
	    c.background_color = BG_COLOR
	    c.color = TEXT_COLOR
	    c.circle(cx, cy, r, color=TARGET_COLOR, fill=True)
	    return c
	
	
	def fit_button_text(button_text, button_w, button_h, start_font_size):
	    """Reduce button font size until the text fits into the button."""
	    usable_w = button_w - 2 * button_pad_x
	    usable_h = button_h - 2 * button_pad_y
	
	    fitted_size = start_font_size
	    tmp = Canvas()
	
	    while fitted_size >= 12:
	        _, text_h = tmp.text_size(
	            button_text,
	            center=True,
	            max_width=usable_w,
	            font_family='Arial',
	            font_size=fitted_size,
	            html=True
	        )
	
	        if text_h <= usable_h:
	            return fitted_size
	
	        fitted_size -= 1
	
	    return 12
	
	
	def draw_feedback_screen(percent_correct, button_enabled):
	    """
	    Draw feedback_fam + percent correct in the upper third,
	    and a bottom-right next button.
	    Returns button geometry.
	    """
	    c = Canvas()
	    c.background_color = BG_COLOR
	    c.color = TEXT_COLOR
	
	    # --------------------------------------------------------
	    # Feedback text in upper third
	    # --------------------------------------------------------
	    fb_label = clean_html(feedback_fam)
	    fb_text = '{} {}%'.format(fb_label, percent_correct)
	
	    c.text(
	        fb_text,
	        center=True,
	        x=0,
	        y=-screen_h // 6,
	        max_width=screen_w - 2 * margin,
	        color=TEXT_COLOR,
	        font_family='Arial',
	        font_size=feedback_font_size,
	        html=True
	    )
	
	    # --------------------------------------------------------
	    # Bottom-right next button
	    # --------------------------------------------------------
	    button_text = clean_html(next_msg)
	
	    button_w = int(round(218 * scale))
	    button_h = int(round(56 * scale))
	
	    # Same bounds as in the previous instruction screens
	    button_w = max(165, min(int(round(screen_w * 0.30)), button_w))
	    button_h = max(44, min(int(round(screen_h * 0.11)), button_h))
	
	    button_x = screen_w // 2 - margin - button_w
	    button_y = screen_h // 2 - margin - button_h
	
	    fitted_button_font_size = fit_button_text(
	        button_text,
	        button_w,
	        button_h,
	        button_font_size
	    )
	
	    # Button is grey during the minimum feedback duration
	    if button_enabled:
	        fill_color = button_fill_enabled
	        border_color = button_border_enabled
	    else:
	        fill_color = button_fill_disabled
	        border_color = button_border_disabled
	
	    # Draw button rectangle
	    c.rect(
	        button_x,
	        button_y,
	        button_w,
	        button_h,
	        fill=True,
	        color=fill_color,
	        penwidth=0
	    )
	
	    # Draw button border
	    c.rect(
	        button_x,
	        button_y,
	        button_w,
	        button_h,
	        fill=False,
	        color=border_color,
	        penwidth=max(1, int(round(2 * scale)))
	    )
	
	    # Draw button text
	    c.text(
	        button_text,
	        center=True,
	        x=int(round(button_x + button_w / 2)),
	        y=int(round(button_y + button_h / 2)),
	        max_width=button_w - 2 * button_pad_x,
	        color=button_text_color,
	        font_family='Arial',
	        font_size=fitted_button_font_size,
	        html=False
	    )
	
	    c.show()
	
	    return button_x, button_y, button_w, button_h
	
	
	def wait_for_feedback_button(button_x, button_y, button_w, button_h):
	    """Wait until the participant first-touches the next button."""
	    mouse.flush()
	    touch_state = make_touch_state()
	
	    while True:
	        pos, ts = get_first_touch(touch_state)
	
	        if pos is not None and point_in_rect(pos, button_x, button_y, button_w, button_h):
	            return pos, ts
	
	        key, key_ts = kb.get_key(timeout=1)
	        if key == 'escape':
	            raise Exception('Aborted with ESC.')
	
	        clock.sleep(1)
	
	
	# ------------------------------------------------------------
	# safety checks for dynamic text variables
	# ------------------------------------------------------------
	required_vars = [
	    'feedback_fam',
	    'next_msg'
	]
	
	for var_name in required_vars:
	    if var_name not in vars():
	        raise RuntimeError('Required variable is missing: {}'.format(var_name))
	
	
	# ------------------------------------------------------------
	# initialize logging variables
	# ------------------------------------------------------------
	fam_seed = FAM_SEED
	fam_n_targets = N_TARGETS
	fam_n_correct = 0
	fam_accuracy = -1
	fam_accuracy_percent = -1
	
	for i in range(1, N_TARGETS + 1):
	    globals()['fam_target_%d_x' % i] = -1
	    globals()['fam_target_%d_y' % i] = -1
	    globals()['fam_target_%d_r' % i] = -1
	    globals()['fam_target_%d_touch_x' % i] = -1
	    globals()['fam_target_%d_touch_y' % i] = -1
	    globals()['fam_target_%d_touch_time' % i] = -1
	    globals()['fam_target_%d_correct' % i] = -1
	
	# ------------------------------------------------------------
	# precompute fixed random target sequence
	# balanced across sizes
	# ------------------------------------------------------------
	diameter_pool = target_diameters * (N_TARGETS // len(target_diameters))
	
	remainder = N_TARGETS - len(diameter_pool)
	if remainder > 0:
	    diameter_pool.extend(target_diameters[:remainder])
	
	random.shuffle(diameter_pool)
	
	target_sequence = []
	prev_pos = None
	
	for diameter in diameter_pool:
	    r = int(round(diameter / 2.0))
	    x, y = random_position_for_radius(r, prev_pos=prev_pos, min_dist=min_jump_distance)
	
	    target_sequence.append({
	        'x': x,
	        'y': y,
	        'r': r
	    })
	
	    prev_pos = (x, y)
	
	# ------------------------------------------------------------
	# start familiarization directly
	# ------------------------------------------------------------
	mouse.flush()
	
	# ------------------------------------------------------------
	# run familiarization
	# ------------------------------------------------------------
	touch_state = make_touch_state()
	
	for i, t in enumerate(target_sequence, start=1):
	    cx = t['x']
	    cy = t['y']
	    r = t['r']
	
	    globals()['fam_target_%d_x' % i] = cx
	    globals()['fam_target_%d_y' % i] = cy
	    globals()['fam_target_%d_r' % i] = r
	
	    canv = draw_target(cx, cy, r)
	    canv.show()
	
	    mouse.flush()
	
	    while True:
	        pos, ts = get_first_touch(touch_state)
	
	        if pos is not None:
	            tx, ty = pos
	
	            globals()['fam_target_%d_touch_x' % i] = tx
	            globals()['fam_target_%d_touch_y' % i] = ty
	            globals()['fam_target_%d_touch_time' % i] = ts
	
	            correct = int(inside_circle(tx, ty, cx, cy, r))
	            globals()['fam_target_%d_correct' % i] = correct
	
	            if correct == 1:
	                fam_n_correct += 1
	
	            break
	
	        key, key_ts = kb.get_key(timeout=1)
	        if key == 'escape':
	            raise Exception('Aborted with ESC.')
	
	        clock.sleep(1)
	
	# ------------------------------------------------------------
	# feedback
	# ------------------------------------------------------------
	fam_accuracy = float(fam_n_correct) / float(fam_n_targets)
	fam_accuracy_percent = int(round(fam_accuracy * 100))
	
	# First draw feedback with disabled button
	button_x, button_y, button_w, button_h = draw_feedback_screen(
	    percent_correct=fam_accuracy_percent,
	    button_enabled=False
	)
	
	feedback_onset = clock.time()
	
	# Ignore touches during the minimum feedback duration.
	# Do not use mouse.get_click() here, because responses should be based on first contact.
	while clock.time() - feedback_onset < min_feedback_duration:
	    key, key_ts = kb.get_key(timeout=1)
	    if key == 'escape':
	        raise Exception('Aborted with ESC.')
	    clock.sleep(10)
	
	# Re-draw feedback with enabled button
	button_x, button_y, button_w, button_h = draw_feedback_screen(
	    percent_correct=fam_accuracy_percent,
	    button_enabled=True
	)
	
	mouse.flush()
	wait_for_feedback_button(button_x, button_y, button_w, button_h)
	
	try:
	    mouse.show_cursor(False)
	except Exception:
	    pass
	
	print("Familiarization done")
	print("Correct:", fam_n_correct, "/", fam_n_targets)
	print("Accuracy:", fam_accuracy)
	print("Accuracy percent:", fam_accuracy_percent)
	__end__
	set _prepare ""

define sequence gotopractice_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run present_imghand_instr "trial_mode == \"imagery\""
	run present_practbl_instr True

define form_multiple_choice handedness
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	{handedness_r}
	{handedness_l}
	{handedness_b}
	__end__
	set margins "50;50;50;50"
	set form_var handedness
	set form_title "{handedness_item}"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define form_multiple_choice ids
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	2.03, 3.03, 4.03, 5.03, 6.03
	2.2, 3, 3.8, 4.6, 5.4
	2.25, 3, 3.75, 4.5, 5.25
	__end__
	set margins "50;50;50;50"
	set form_var selected_ids
	set form_title "Choose the IDs (movement difficulties):"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define inline_script init_block
	set description "Executes Python code"
	___run__
	import random
	
	# ------------------------------------------------------------
	# determine condition from group and n_testbl
	# ------------------------------------------------------------
	if str(group).upper() == 'A':
	    current_condition = 'execution' if int(n_testbl) == 1 else 'imagery'
	else:
	    current_condition = 'imagery' if int(n_testbl) == 1 else 'execution'
	
	trial_mode = current_condition
	
	# ------------------------------------------------------------
	# dynamic instruction
	# ------------------------------------------------------------
	if trial_mode == 'execution':
	    instr_msg_1 = exe_instr_msg_1
	    instr_msg_2 = exe_instr_msg_2
	    instr_msg_3 = exe_instr_msg_3
	    instr_msg_4 = exe_instr_msg_4
	    instr_img = "accurate_exe.png"
	    CC_option_A_txt = exe_CC_option_A
	    CC_option_B_txt = exe_CC_option_B
	    CC_option_C_txt = exe_CC_option_C
	    CC_option_D_txt = exe_CC_option_D
	    CC_option_E_txt = exe_CC_option_E
	    CC_option_F_txt = exe_CC_option_F
	    practbl_msg = exe_practbl_msg
	    start_trial_msg = exe_start_trial_msg
	else:
	    instr_msg_1 = img_instr_msg_1
	    instr_msg_2 = img_instr_msg_2
	    instr_msg_3 = img_instr_msg_3
	    instr_msg_4 = img_instr_msg_4
	    instr_img = "accurate_img.png"
	    CC_option_A_txt = img_CC_option_A
	    CC_option_B_txt = img_CC_option_B
	    CC_option_C_txt = img_CC_option_C
	    CC_option_D_txt = img_CC_option_D
	    CC_option_E_txt = img_CC_option_E
	    CC_option_F_txt = img_CC_option_F
	    practbl_msg = img_practbl_msg
	    start_trial_msg = img_start_trial_msg
	    
	# ------------------------------------------------------------
	# build dynamic test trial list
	# selected_ids can vary at experiment start
	# n_reps can vary at experiment start
	# ------------------------------------------------------------
	selected_id_list = parse_float_list(selected_ids)
	
	test_trial_ids = []
	for _ in range(int(n_reps)):
	    tmp = list(selected_id_list)
	    random.shuffle(tmp)
	    test_trial_ids.extend(tmp)
	
	random.shuffle(test_trial_ids)
	test_n_trials = len(test_trial_ids)
	
	# ------------------------------------------------------------
	# block-specific trial counters
	practice_counter = 0
	test_counter = 0
	
	# totals for display
	practice_total_trials = 4
	test_total_trials = int(test_n_trials)
	
	# ------------------------------------------------------------
	# comprehension check counters
	# ------------------------------------------------------------
	CC_correct = 0
	CC_attempt_n = 0
	
	# ------------------------------------------------------------
	print("block_init done")
	print("current_condition =", current_condition)
	print("trial_mode =", trial_mode)
	print("test_trial_ids =", test_trial_ids)
	print("test_n_trials =", test_n_trials)
	__end__
	set _prepare ""

define inline_script init_demographics
	set description "Executes Python code"
	___run__
	import pandas as pd
	
	# read Demographics.xlsx into a dataframe
	dmg_df = pd.read_excel(pool['Demographics.xlsx'])
	
	# Set language column (e.g., 'EN')
	lang_col = selected_ISO
	
	# For each row: create a global experimental variable with the message key
	for _, row in dmg_df.iterrows():
	    varname = row['demographics']
	    value = row[lang_col]
	    # Assign as global experimental variable
	    globals()[varname] = value
	__end__
	set _prepare ""

define inline_script init_experiment_settings
	set description "Executes Python code"
	___run__
	# ISO code
	selected_ISO = lang_df.loc[lang_df['language'] == selected_language, 'ISO_code'].values[0] 
	selected_ISO_low = selected_ISO.lower()
	
	# order
	if selected_order == "Random":
	    import random
	    tmp = random.randrange(100000000000)
	    group = "A" if tmp % 2 == 0 else "B"
	elif selected_order == "Start with imagery":
	    group = "B"
	elif selected_order == "Start with execution":
	    group = "A"
	    
	# n_reps
	n_reps = int(selected_n_reps)
	
	# check for debugging
	print("selected_language:", selected_language)
	print("lang_df:", lang_df)
	print('selected_ISO:', selected_ISO)
	print('tmp:', tmp)
	print('group:', group)
	print('height:', height)
	print('width:', width)
	__end__
	set _prepare ""

define inline_script init_localiser
	set description "dynamic language selection from language_localiser.xlsx"
	___run__
	import pandas as pd
	
	# read language_localiser.xlsx into a dataframe
	lang_df = pd.read_excel(pool['language_localiser.xlsx'])
	
	# extracts language column and converts it into a list (= response options in language_localiser)
	language_list = lang_df['language'].tolist() 
	__end__
	set _prepare ""

define inline_script init_messages
	set description "load messages for chosen language from messages.xlsx"
	___run__
	# read messages.xlsx into a dataframe
	msg_df = pd.read_excel(pool['Messages.xlsx'])
	lang_col = selected_ISO
	
	for i, row in msg_df.iterrows(): # iterates over each row (message) of the dataframe
	    varname = row['message'] # grabs the message key (rowname)
	    value = row[lang_col] # select the desired column
	    globals()[varname] = value # creates a global variable with the name stored in varname and assigns it the value
	    print('varname:', varname)
	    print('value:', value)
	__end__
	set _prepare ""

define inline_script init_targets_geometry
	set description "Executes Python code"
	___run__
	import math
	import random
	
	# ------------------------------------------------------------
	# helpers
	# ------------------------------------------------------------
	def parse_float_list(s):
	    parts = [p.strip() for p in str(s).split(",")]
	    parts = [p for p in parts if p != ""]
	    return [float(p) for p in parts]
	
	def round_int(x):
	    return int(round(float(x)))
	
	def radius_from_id(amplitude, id_value):
	    # ID = log2(A / px_target)
	    # => px_target = A / 2^ID
	    return float(amplitude) / (2 ** float(id_value))
	
	# ------------------------------------------------------------
	# reference geometry
	# ------------------------------------------------------------
	REF_HEIGHT = 768.0
	N_TARGETS = 5
	
	REF_MIDX_RED = 0.0
	REF_MIDY_RED = 342.0
	REF_PX_RED = 40.0
	
	REF_TEST_AMPLITUDE = 458.0
	REF_PRACTICE_AMPLITUDE = 400.0
	
	# ------------------------------------------------------------
	# read user variables
	# ------------------------------------------------------------
	selected_id_list = parse_float_list(selected_ids)
	
	try:
	    practice_ids_list = parse_float_list(practice_ids)
	except Exception:
	    practice_ids_list = [2.321928, 4.321928]
	
	# ------------------------------------------------------------
	# scale fixed geometry
	# ------------------------------------------------------------
	screen_w = int(width)
	screen_h = int(height)
	scale = float(screen_h) / REF_HEIGHT
	
	midx_red = round_int(REF_MIDX_RED * scale)
	midy_red = round_int(REF_MIDY_RED * scale)
	px_red = max(1, round_int(REF_PX_RED * scale))
	width_red = 2 * px_red
	
	practice_amplitude = round_int(REF_PRACTICE_AMPLITUDE * scale)
	test_amplitude = round_int(REF_TEST_AMPLITUDE * scale)
	
	# ------------------------------------------------------------
	# build lookup tables
	# ------------------------------------------------------------
	def build_geometry_lookup(id_list, amplitude_px):
	    px_target_vec = [radius_from_id(amplitude_px, i) for i in id_list]
	    max_px_target = max(px_target_vec)
	
	    mr = amplitude_px + px_red + max_px_target
	    angle_step_deg = 180.0 / (N_TARGETS + 1)
	
	    lookup = {}
	
	    for id_value in id_list:
	        px_i = max(1, round_int(radius_from_id(amplitude_px, id_value)))
	        width_i = 2 * px_i
	        r_i = mr - (max_px_target - px_i)
	
	        coords = []
	        for target_index in range(1, N_TARGETS + 1):
	            angle_deg = angle_step_deg * target_index
	            angle_rad = math.radians(angle_deg)
	
	            x_i = round_int(r_i * math.cos(angle_rad))
	            y_i = round_int(midy_red - r_i * math.sin(angle_rad))
	
	            coords.append({
	                'label': 'target_%d' % target_index,
	                'x': x_i,
	                'y': y_i,
	                'r': px_i,
	                'angle_deg': angle_deg
	            })
	
	        lookup[id_value] = {
	            'id': id_value,
	            'px_target': px_i,
	            'width_target': width_i,
	            'r_center': r_i,
	            'coords': coords
	        }
	
	    return lookup
	
	crft_geometry_practice = build_geometry_lookup(practice_ids_list, practice_amplitude)
	crft_geometry_test = build_geometry_lookup(selected_id_list, test_amplitude)
	
	# ------------------------------------------------------------
	# expose current trial geometry
	# ------------------------------------------------------------
	def apply_trial_geometry(id_value, block_kind):
	    global current_id_num, current_block_kind
	    global amplitude, px_target, width_target, r_center
	    global target_1_x, target_1_y, target_2_x, target_2_y, target_3_x, target_3_y
	    global target_4_x, target_4_y, target_5_x, target_5_y
	
	    current_id_num = float(id_value)
	    current_block_kind = str(block_kind)
	
	    if block_kind == 'practice':
	        lookup = crft_geometry_practice
	        amplitude = practice_amplitude
	    else:
	        lookup = crft_geometry_test
	        amplitude = test_amplitude
	
	    geom = lookup[current_id_num]
	
	    px_target = geom['px_target']
	    width_target = geom['width_target']
	    r_center = geom['r_center']
	
	    target_1_x = geom['coords'][0]['x']
	    target_1_y = geom['coords'][0]['y']
	    target_2_x = geom['coords'][1]['x']
	    target_2_y = geom['coords'][1]['y']
	    target_3_x = geom['coords'][2]['x']
	    target_3_y = geom['coords'][2]['y']
	    target_4_x = geom['coords'][3]['x']
	    target_4_y = geom['coords'][3]['y']
	    target_5_x = geom['coords'][4]['x']
	    target_5_y = geom['coords'][4]['y']
	
	print("exp_init done")
	print("selected_id_list =", selected_id_list)
	print("practice_ids_list =", practice_ids_list)
	__end__
	set _prepare ""

define form_multiple_choice language_localiser
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	English
	German
	French
	Spanish
	__end__
	set margins "50;50;50;50"
	set form_var selected_language
	set form_title "Choose your language:"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define form_multiple_choice n_reps
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	3
	4
	5
	6
	__end__
	set margins "50;50;50;50"
	set form_var selected_n_reps
	set form_title "Choose the number of repetitions per ID:"
	set description ""
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define form_multiple_choice order
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	Random
	Start with imagery
	Start with execution
	__end__
	set margins "50;50;50;50"
	set form_var selected_order
	set form_title "Choose the order of action execution and action imagery:"
	set description ""
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define loop practice_loop
	set source_file ""
	set source table
	set repeat 2
	set order random
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 current_trial_id 2.321928
	setcycle 0 block_kind practice
	setcycle 1 current_trial_id 4.321928
	setcycle 1 block_kind practice
	run practice_trial_sequence

define sequence practice_trial_logger
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run logger True

define sequence practice_trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run set_practice_geom True
	run trial_inline_script True
	run practice_trial_logger True

define inline_script preparations
	set description "Executes Python code"
	___run__
	# phase item
	phase = "preparation"
	
	# initialize defaults for experiment settings
	# if you want participants to choose the settings themselves, click "experiment_settings"
	# and set the respective "Run if" statement(s) to "True"
	selected_language = "English"            # Alternative options: "German", "French", "Spanish", ...
	ISO_code = "EN"                          # "DE", "FR", "ES", ...
	selected_ISO = "EN"                      # "DE", "FR", "ES", ...
	selected_ISO_low = "en"                  # "de", "fr", "es", ...
	selected_n_reps = "4"                    # 3, 5, 6
	selected_order = "Random"                # "Start with imagery", "Start with execution"
	selected_ids = "2.03, 3.03, 4.03, 5.03, 6.03" # used in original study; alternative: 2.25, 3, 3.75, 4.5, 5.25", "2.2, 3, 3.8, 4.6, 5.4"
	
	# other
	age = None
	sex = None
	handedness = None
	group = None
	tmp = None
	
	n_reps = None
	n_trial = 0
	n_testbl = 0
	__end__
	___prepare__
	age_item = "none"
	__end__

define inline_script present_CC_check
	set description "Executes Python code"
	___run__
	# ------------------------------------------------------------
	# present_CC_check
	# Multiple-choice comprehension check with six toggle options.
	# Correct answers depend on trial_mode.
	#
	# execution correct: C and F
	# imagery correct: A, B, E, and F
	#
	# Compatible with OpenSesame 4.0.24, xpyriment backend
	# ------------------------------------------------------------
	
	# ------------------------------------------------------------
	# Basic settings
	# ------------------------------------------------------------
	REF_HEIGHT = 768.0
	
	screen_w = int(width)
	screen_h = int(height)
	screen_scale = float(screen_h) / REF_HEIGHT
	
	# Layout
	margin = int(round(48 * screen_scale))
	gap = int(round(18 * screen_scale))
	
	font_size = int(round(24 * screen_scale))
	font_size = max(17, min(32, font_size))
	
	instr_1_font_size = int(round(24 * screen_scale))
	instr_1_font_size = max(17, min(32, instr_1_font_size))
	
	instr_2_font_size = int(round(24 * screen_scale))
	instr_2_font_size = max(17, min(32, instr_2_font_size))
	
	option_font_size = int(round(22 * screen_scale))
	option_font_size = max(16, min(30, option_font_size))
	
	feedback_font_size = int(round(28 * screen_scale))
	feedback_font_size = max(20, min(40, feedback_font_size))
	
	button_font_size = int(round(20 * screen_scale))
	button_font_size = max(14, min(26, button_font_size))
	
	button_pad_x = int(round(20 * screen_scale))
	button_pad_y = int(round(10 * screen_scale))
	
	box_size = int(round(28 * screen_scale))
	box_size = max(20, min(40, box_size))
	
	row_gap = int(round(18 * screen_scale))
	row_gap = max(10, min(26, row_gap))
	
	# Uni Innsbruck style
	uibk_orange = '#f39200'
	button_fill_enabled = '#fff7ed'
	button_border_enabled = uibk_orange
	button_text_color = 'black'
	
	# Colors
	BG_COLOR = 'white'
	TEXT_COLOR = 'black'
	BOX_BORDER_COLOR = 'black'
	BOX_SELECTED_COLOR = 'black'
	BOX_UNSELECTED_COLOR = 'white'
	
	
	# ------------------------------------------------------------
	# Helper functions
	# ------------------------------------------------------------
	def clean_html(text):
	    """Keep HTML, but remove leading/trailing whitespace."""
	    return str(text).replace('\n', ' ').strip()
	
	
	def ipos(value):
	    """Return an integer pixel position."""
	    return int(round(value))
	
	
	def point_in_rect(pos, x, y, w, h):
	    """Check whether a click position is inside a rectangle."""
	    if pos is None:
	        return False
	
	    px, py = pos
	    return (x <= px <= x + w) and (y <= py <= y + h)
	
	
	def check_escape(kb):
	    """Abort the experiment when Escape is pressed."""
	    key, key_time = kb.get_key(timeout=1)
	
	    if key == 'escape':
	        raise Exception('Aborted with ESC.')
	
	
	def fit_button_text(button_text, button_w, button_h, start_font_size):
	    """Reduce button font size until the text fits into the button."""
	    usable_w = button_w - 2 * button_pad_x
	    usable_h = button_h - 2 * button_pad_y
	
	    fitted_size = start_font_size
	    tmp = Canvas()
	
	    while fitted_size >= 12:
	        _, text_h = tmp.text_size(
	            button_text,
	            center=True,
	            max_width=usable_w,
	            font_family='Arial',
	            font_size=fitted_size,
	            html=False
	        )
	
	        if text_h <= usable_h:
	            return fitted_size
	
	        fitted_size -= 1
	
	    return 12
	
	
	def get_button_geometry():
	    """Return bottom-right next button geometry and fitted font size."""
	    button_text = clean_html(next_msg)
	
	    button_w = int(round(218 * screen_scale))
	    button_h = int(round(56 * screen_scale))
	
	    button_w = max(165, min(int(round(screen_w * 0.30)), button_w))
	    button_h = max(44, min(int(round(screen_h * 0.11)), button_h))
	
	    button_x = screen_w // 2 - margin - button_w
	    button_y = screen_h // 2 - margin - button_h
	
	    fitted_button_font_size = fit_button_text(
	        button_text,
	        button_w,
	        button_h,
	        button_font_size
	    )
	
	    return button_x, button_y, button_w, button_h, fitted_button_font_size
	
	
	def draw_next_button(c, button_x, button_y, button_w, button_h, fitted_button_font_size):
	    """Draw the bottom-right next button."""
	    button_text = clean_html(next_msg)
	
	    c.rect(
	        ipos(button_x),
	        ipos(button_y),
	        ipos(button_w),
	        ipos(button_h),
	        fill=True,
	        color=button_fill_enabled,
	        penwidth=0
	    )
	
	    c.rect(
	        ipos(button_x),
	        ipos(button_y),
	        ipos(button_w),
	        ipos(button_h),
	        fill=False,
	        color=button_border_enabled,
	        penwidth=max(1, int(round(2 * screen_scale)))
	    )
	
	    c.text(
	        button_text,
	        center=True,
	        x=ipos(button_x + button_w / 2),
	        y=ipos(button_y + button_h / 2),
	        max_width=button_w - 2 * button_pad_x,
	        color=button_text_color,
	        font_family='Arial',
	        font_size=fitted_button_font_size,
	        html=False
	    )
	
	
	def draw_cc_screen(selected):
	    """
	    Draw the comprehension-check screen.
	    selected is a dictionary with keys A-F and values 0/1.
	    Returns the canvas, button geometry and option hit areas.
	    """
	    c = Canvas()
	    c.clear(color=BG_COLOR)
	
	    text_x = -screen_w // 2 + margin
	    text_max_width = screen_w - 2 * margin
	
	    button_x, button_y, button_w, button_h, fitted_button_font_size = get_button_geometry()
	
	    # --------------------------------------------------------
	    # Instruction texts
	    # --------------------------------------------------------
	    y_cursor = -screen_h // 2 + int(round(60 * screen_scale))
	
	    instr_1 = clean_html(CC_instr_msg_1)
	    instr_2 = clean_html(CC_instr_msg_2)
	
	    c.text(
	        instr_1,
	        center=False,
	        x=ipos(text_x),
	        y=ipos(y_cursor),
	        max_width=text_max_width,
	        color=TEXT_COLOR,
	        font_family='Arial',
	        font_size=instr_1_font_size,
	        html=True
	    )
	
	    _, instr_1_h = c.text_size(
	        instr_1,
	        center=False,
	        max_width=text_max_width,
	        font_family='Arial',
	        font_size=instr_1_font_size,
	        html=True
	    )
	
	    y_cursor += int(round(instr_1_h + 18 * screen_scale))
	
	    c.text(
	        instr_2,
	        center=False,
	        x=ipos(text_x),
	        y=ipos(y_cursor),
	        max_width=text_max_width,
	        color=TEXT_COLOR,
	        font_family='Arial',
	        font_size=instr_2_font_size,
	        html=True
	    )
	
	    _, instr_2_h = c.text_size(
	        instr_2,
	        center=False,
	        max_width=text_max_width,
	        font_family='Arial',
	        font_size=instr_2_font_size,
	        html=True
	    )
	
	    y_cursor += int(round(instr_2_h + 24 * screen_scale))
	
	    # --------------------------------------------------------
	    # Options
	    # --------------------------------------------------------
	    option_texts = [
	        ('A', clean_html(CC_option_A_txt)),
	        ('B', clean_html(CC_option_B_txt)),
	        ('C', clean_html(CC_option_C_txt)),
	        ('D', clean_html(CC_option_D_txt)),
	        ('E', clean_html(CC_option_E_txt)),
	        ('F', clean_html(CC_option_F_txt))
	    ]
	
	    option_hit_areas = {}
	
	    option_x = text_x
	    box_x = option_x
	    text_option_x = box_x + box_size + int(round(18 * screen_scale))
	
	    option_text_max_width = (
	        screen_w
	        - 2 * margin
	        - box_size
	        - int(round(24 * screen_scale))
	    )
	
	    # Estimate row height from option font size.
	    min_row_h = int(round(box_size + 8 * screen_scale))
	
	    for label, option_text in option_texts:
	        # Measure option text height because translations can differ in length.
	        _, option_text_h = c.text_size(
	            option_text,
	            center=False,
	            max_width=option_text_max_width,
	            font_family='Arial',
	            font_size=option_font_size,
	            html=True
	        )
	
	        row_h = max(min_row_h, int(round(option_text_h)))
	
	        box_y = y_cursor + int(round((row_h - box_size) / 2))
	
	        # Set initial checkbox fill.
	        if selected[label] == 1:
	            fill_color = BOX_SELECTED_COLOR
	        else:
	            fill_color = BOX_UNSELECTED_COLOR
	
	        # Keep the fill as a named element so only this box needs updating.
	        c['cc_fill_' + label] = Rect(
	            x=ipos(box_x),
	            y=ipos(box_y),
	            w=ipos(box_size),
	            h=ipos(box_size),
	            fill=True,
	            color=fill_color,
	            penwidth=0
	        )
	
	        # Draw checkbox border.
	        c.rect(
	            ipos(box_x),
	            ipos(box_y),
	            ipos(box_size),
	            ipos(box_size),
	            fill=False,
	            color=BOX_BORDER_COLOR,
	            penwidth=max(1, int(round(2 * screen_scale)))
	        )
	
	        # Draw option text.
	        c.text(
	            option_text,
	            center=False,
	            x=ipos(text_option_x),
	            y=ipos(y_cursor),
	            max_width=option_text_max_width,
	            color=TEXT_COLOR,
	            font_family='Arial',
	            font_size=option_font_size,
	            html=True
	        )
	
	        # For touchscreen usability, the whole row toggles the option.
	        option_hit_areas[label] = (
	            ipos(box_x),
	            ipos(y_cursor - 4 * screen_scale),
	            ipos(option_text_max_width + box_size + 24 * screen_scale),
	            ipos(row_h + 8 * screen_scale)
	        )
	
	        y_cursor += int(round(row_h + row_gap))
	
	    # --------------------------------------------------------
	    # Next button
	    # --------------------------------------------------------
	    draw_next_button(
	        c,
	        button_x,
	        button_y,
	        button_w,
	        button_h,
	        fitted_button_font_size
	    )
	
	    c.show()
	
	    return c, button_x, button_y, button_w, button_h, option_hit_areas
	
	
	def evaluate_cc(selected):
	    """
	    Evaluate comprehension check.
	    Saves selected options and correctness as OpenSesame variables.
	    """
	    global CC_selected_A
	    global CC_selected_B
	    global CC_selected_C
	    global CC_selected_D
	    global CC_selected_E
	    global CC_selected_F
	    global CC_selected_options
	    global CC_expected_options
	    global CC_correct
	
	    CC_selected_A = selected['A']
	    CC_selected_B = selected['B']
	    CC_selected_C = selected['C']
	    CC_selected_D = selected['D']
	    CC_selected_E = selected['E']
	    CC_selected_F = selected['F']
	
	    selected_labels = []
	
	    for label in ['A', 'B', 'C', 'D', 'E', 'F']:
	        if selected[label] == 1:
	            selected_labels.append(label)
	
	    CC_selected_options = ','.join(selected_labels)
	
	    if trial_mode == 'execution':
	        expected = ['C', 'F']
	    elif trial_mode == 'imagery':
	        expected = ['A', 'B', 'E', 'F']
	    else:
	        raise ValueError('Unknown trial_mode: {}'.format(trial_mode))
	
	    CC_expected_options = ','.join(expected)
	
	    CC_correct = int(set(selected_labels) == set(expected))
	
	    return CC_correct
	
	
	def draw_feedback_screen(is_correct):
	    """
	    Draw feedback_correct_msg or feedback_incorrect_msg.
	    Returns button geometry.
	    """
	    c = Canvas()
	    c.clear(color=BG_COLOR)
	
	    if is_correct == 1:
	        feedback_text = clean_html(feedback_correct_msg)
	    else:
	        feedback_text = clean_html(feedback_incorrect_msg)
	
	    text_max_width = screen_w - 2 * margin
	
	    _, feedback_h = c.text_size(
	        feedback_text,
	        center=True,
	        max_width=text_max_width,
	        font_family='Arial',
	        font_size=feedback_font_size,
	        html=True
	    )
	
	    feedback_y = int(round(-feedback_h / 2))
	
	    c.text(
	        feedback_text,
	        center=True,
	        x=0,
	        y=ipos(feedback_y),
	        max_width=text_max_width,
	        color=TEXT_COLOR,
	        font_family='Arial',
	        font_size=feedback_font_size,
	        html=True
	    )
	
	    button_x, button_y, button_w, button_h, fitted_button_font_size = get_button_geometry()
	
	    draw_next_button(
	        c,
	        button_x,
	        button_y,
	        button_w,
	        button_h,
	        fitted_button_font_size
	    )
	
	    c.show()
	
	    return button_x, button_y, button_w, button_h
	
	
	def wait_for_button(button_x, button_y, button_w, button_h, kb):
	    """Wait until the bottom-right next button is clicked, but allow ESC abort."""
	    mouse.flush()
	    kb.flush()
	
	    while True:
	        button, pos, click_time = mouse.get_click(timeout=1)
	
	        if button is not None and point_in_rect(
	            pos,
	            button_x,
	            button_y,
	            button_w,
	            button_h
	        ):
	            return
	
	        check_escape(kb)
	
	
	# ------------------------------------------------------------
	# Safety checks
	# ------------------------------------------------------------
	required_vars = [
	    'trial_mode',
	    'next_msg',
	    'CC_instr_msg_1',
	    'CC_instr_msg_2',
	    'CC_option_A_txt',
	    'CC_option_B_txt',
	    'CC_option_C_txt',
	    'CC_option_D_txt',
	    'CC_option_E_txt',
	    'CC_option_F_txt',
	    'feedback_correct_msg',
	    'feedback_incorrect_msg'
	]
	
	for var_name in required_vars:
	    if var_name not in vars():
	        raise RuntimeError('Required variable is missing: {}'.format(var_name))
	
	
	# ------------------------------------------------------------
	# Main presentation
	# ------------------------------------------------------------
	mouse = Mouse(visible=False)
	kb = Keyboard(keylist=['escape'], timeout=1)
	
	try:
	    mouse.show_cursor(False)
	except Exception:
	    pass
	
	# Initial selection state.
	selected = {
	    'A': 0,
	    'B': 0,
	    'C': 0,
	    'D': 0,
	    'E': 0,
	    'F': 0
	}
	
	# Draw the MC screen once and keep the canvas for fast checkbox updates.
	cc_canvas, button_x, button_y, button_w, button_h, option_hit_areas = (
	    draw_cc_screen(selected)
	)
	
	mouse.flush()
	kb.flush()
	
	# Interaction loop.
	while True:
	    button, pos, click_time = mouse.get_click(timeout=1)
	
	    check_escape(kb)
	
	    if button is None:
	        continue
	
	    # Continue button.
	    if point_in_rect(pos, button_x, button_y, button_w, button_h):
	        break
	
	    # Toggle options.
	    toggled = False
	
	    for label in ['A', 'B', 'C', 'D', 'E', 'F']:
	        x, y, w, h = option_hit_areas[label]
	
	        if point_in_rect(pos, x, y, w, h):
	            selected[label] = 1 - selected[label]
	            toggled = True
	            break
	
	    if toggled:
	        # Update only the fill of the touched checkbox.
	        if selected[label] == 1:
	            fill_color = BOX_SELECTED_COLOR
	        else:
	            fill_color = BOX_UNSELECTED_COLOR
	
	        cc_canvas['cc_fill_' + label].color = fill_color
	        cc_canvas.show()
	
	        # Discard pending input to reduce accidental double toggles.
	        mouse.flush()
	        kb.flush()
	
	
	# ------------------------------------------------------------
	# Evaluate and save results
	# ------------------------------------------------------------
	is_correct = evaluate_cc(selected)
	
	# Count how often the comprehension check was completed in this block.
	try:
	    CC_attempt_n = int(CC_attempt_n) + 1
	except Exception:
	    CC_attempt_n = 1
	
	# Show correctness feedback.
	button_x, button_y, button_w, button_h = draw_feedback_screen(is_correct)
	wait_for_button(button_x, button_y, button_w, button_h, kb)
	
	try:
	    mouse.show_cursor(False)
	except Exception:
	    pass
	
	print('present_CC_check done')
	print('trial_mode =', trial_mode)
	print('CC_selected_options =', CC_selected_options)
	print('CC_expected_options =', CC_expected_options)
	print('CC_correct =', CC_correct)
	print('CC_attempt_n =', CC_attempt_n)
	__end__
	set _prepare ""

define inline_script present_famil_instr
	set description "Executes Python code"
	___run__
	# ------------------------------------------------------------
	# present_text_screen_with_image
	# Shows one dynamic text variable left-aligned on the screen.
	# Shows accurate_exe.png below the text and above the button.
	# A bottom-right button with next_msg continues to the next item.
	#
	# Compatible with OpenSesame 4.0.24, xpyriment backend
	# ------------------------------------------------------------
	
	# ------------------------------------------------------------
	# Select text variable to present
	# ------------------------------------------------------------
	# Change only this line for each new text screen.
	text_to_present = fam_instr_msg
	
	
	# ------------------------------------------------------------
	# Basic settings
	# ------------------------------------------------------------
	REF_HEIGHT = 768.0
	
	screen_w = int(width)
	screen_h = int(height)
	screen_scale = float(screen_h) / REF_HEIGHT
	
	# Layout
	margin = int(round(48 * screen_scale))
	gap = int(round(18 * screen_scale))
	
	# Same general text size as present_instr_1
	font_size = int(round(24 * screen_scale))
	font_size = max(17, min(32, font_size))
	
	button_font_size = int(round(20 * screen_scale))
	button_font_size = max(14, min(26, button_font_size))
	
	button_pad_x = int(round(20 * screen_scale))
	button_pad_y = int(round(10 * screen_scale))
	
	# Uni Innsbruck style
	uibk_orange = '#f39200'
	button_fill_enabled = '#fff7ed'   # light orange / cream
	button_border_enabled = uibk_orange
	button_text_color = 'black'
	
	
	# ------------------------------------------------------------
	# Helper functions
	# ------------------------------------------------------------
	def clean_html(text):
	    """Keep HTML, but remove leading/trailing whitespace."""
	    return str(text).replace('\n', ' ').strip()
	
	def ipos(value):
	    """Return an integer pixel position."""
	    return int(round(value))
	
	def point_in_rect(pos, x, y, w, h):
	    """Check whether a click position is inside a rectangle."""
	    if pos is None:
	        return False
	    px, py = pos
	    return (x <= px <= x + w) and (y <= py <= y + h)
	
	
	def resolve_pool_file(candidates):
	    """
	    Return the first matching file from the filepool.
	    This makes the script robust to .png / .PNG naming differences.
	    """
	    for name in candidates:
	        if name in pool:
	            return pool[name]
	
	    # Fallback: compare case-insensitively against all pool names
	    lower_map = {}
	    for key in pool:
	        lower_map[str(key).lower()] = key
	
	    for name in candidates:
	        key = lower_map.get(str(name).lower(), None)
	        if key is not None:
	            return pool[key]
	
	    raise RuntimeError(
	        'None of these files were found in the filepool: {}'.format(candidates)
	    )
	
	
	def get_screen_image():
	    """Get the image for this instruction screen."""
	    return resolve_pool_file([
	        'accurate_exe.png',
	        'accurate_exe.PNG'
	    ])
	
	
	def fit_button_text(button_text, button_w, button_h, start_font_size):
	    """Reduce button font size until the text fits into the button."""
	    usable_w = button_w - 2 * button_pad_x
	    usable_h = button_h - 2 * button_pad_y
	
	    fitted_size = start_font_size
	    tmp = Canvas()
	
	    while fitted_size >= 12:
	        _, text_h = tmp.text_size(
	            button_text,
	            center=True,
	            max_width=usable_w,
	            font_family='Arial',
	            font_size=fitted_size,
	            html=True
	        )
	
	        if text_h <= usable_h:
	            return fitted_size
	
	        fitted_size -= 1
	
	    return 12
	
	
	def draw_text_screen():
	    """
	    Draw left-aligned text, image, and bottom-right next button.
	    Returns button geometry.
	    """
	    c = Canvas()
	    c.clear(color='white')
	
	    # --------------------------------------------------------
	    # Main text
	    # --------------------------------------------------------
	    main_text = clean_html(text_to_present)
	
	    text_x = -screen_w // 2 + margin
	    text_y = -screen_h // 2 + int(round(78 * screen_scale))
	    text_max_width = screen_w - 2 * margin
	
	    c.text(
	        main_text,
	        center=False,
	        x=ipos(text_x),
	        y=ipos(text_y),
	        max_width=text_max_width,
	        color='black',
	        font_family='Arial',
	        font_size=font_size,
	        html=True
	    )
	
	    # Measure text height so the image can be placed below it
	    _, text_h = c.text_size(
	        main_text,
	        center=False,
	        max_width=text_max_width,
	        font_family='Arial',
	        font_size=font_size,
	        html=True
	    )
	
	    text_bottom = text_y + text_h
	
	    # --------------------------------------------------------
	    # Bottom-right next button
	    # --------------------------------------------------------
	    button_text = clean_html(next_msg)
	
	    button_w = int(round(218 * screen_scale))
	    button_h = int(round(56 * screen_scale))
	
	    # Keep button within reasonable bounds
	    button_w = max(165, min(int(round(screen_w * 0.30)), button_w))
	    button_h = max(44, min(int(round(screen_h * 0.11)), button_h))
	
	    button_x = screen_w // 2 - margin - button_w
	    button_y = screen_h // 2 - margin - button_h
	
	    fitted_button_font_size = fit_button_text(
	        button_text,
	        button_w,
	        button_h,
	        button_font_size
	    )
	
	    # --------------------------------------------------------
	    # Image below text and above button
	    # --------------------------------------------------------
	    # Native size of accurate_exe.png in the current filepool.
	    image_native_w = 1057.0
	    image_native_h = 212.0
	
	    # The image should appear in the lower half, but never overlap text.
	    image_top = max(
	        text_bottom + gap,
	        -screen_h // 2 + int(round(screen_h * 0.52))
	    )
	
	    # Keep clear space above the button
	    image_bottom = button_y - gap
	
	    image_area_h = max(40, image_bottom - image_top)
	    image_area_w = screen_w - 2 * margin
	
	    image_scale = min(
	        image_area_w / image_native_w,
	        image_area_h / image_native_h
	    )
	
	    # Keep the image reasonably sized
	    image_scale = max(0.10, min(0.60 * screen_scale, image_scale))
	
	    image_x = 0
	    image_y = ipos(image_top + image_area_h / 2)
	    
	    # Draw image from integer top-left coordinates instead of centering it.
	    # Use integer pixel placement to avoid subpixel rendering artifacts.
	    image_left = ipos(image_x - (image_native_w * image_scale) / 2.0)
	    image_top_left = ipos(image_y - (image_native_h * image_scale) / 2.0)
	    
	    c.image(
	        get_screen_image(),
	        center=False,
	        x=image_left,
	        y=image_top_left,
	        scale=image_scale
	    )
	
	    # --------------------------------------------------------
	    # Draw button rectangle
	    # --------------------------------------------------------
	    c.rect(
	        ipos(button_x),
	        ipos(button_y),
	        ipos(button_w),
	        ipos(button_h),
	        fill=True,
	        color=button_fill_enabled,
	        penwidth=0
	    )
	
	    # Draw button border
	    c.rect(
	        ipos(button_x),
	        ipos(button_y),
	        ipos(button_w),
	        ipos(button_h),
	        fill=False,
	        color=button_border_enabled,
	        penwidth=max(1, int(round(2 * screen_scale)))
	    )
	
	    # Draw button text
	    c.text(
	        button_text,
	        center=True,
	        x=int(round(button_x + button_w / 2)),
	        y=int(round(button_y + button_h / 2)),
	        max_width=button_w - 2 * button_pad_x,
	        color=button_text_color,
	        font_family='Arial',
	        font_size=fitted_button_font_size,
	        html=False
	    )
	    
	    c.show()
	
	    return button_x, button_y, button_w, button_h
	
	
	# ------------------------------------------------------------
	# Safety checks
	# ------------------------------------------------------------
	required_vars = [
	    'next_msg'
	]
	
	for var_name in required_vars:
	    if var_name not in vars():
	        raise RuntimeError('Required variable is missing: {}'.format(var_name))
	
	
	# ------------------------------------------------------------
	# Main presentation
	# ------------------------------------------------------------
	mouse = Mouse(visible=False)
	
	try:
	    mouse.show_cursor(False)
	except Exception:
	    pass
	
	mouse.flush()
	
	# Draw screen
	button_x, button_y, button_w, button_h = draw_text_screen()
	
	# Wait until participant touches/clicks the next button
	kb = Keyboard(keylist=['escape'], timeout=1)
	kb.flush()
	
	while True:
	    button, pos, click_time = mouse.get_click(timeout=1)
	
	    if button is not None and point_in_rect(pos, button_x, button_y, button_w, button_h):
	        break
	
	    key, key_time = kb.get_key(timeout=1)
	    if key == 'escape':
	        raise Exception('Aborted with ESC.')
	
	# Keep cursor hidden
	try:
	    mouse.show_cursor(False)
	except Exception:
	    pass
	
	print('present_text_screen_with_image done')
	__end__
	set _prepare ""

define inline_script present_imghand_instr
	set description "Executes Python code"
	___run__
	# ------------------------------------------------------------
	# present_text_screen
	# Shows one dynamic text variable left-aligned on the screen.
	# A bottom-centered box with adv_msg indicates that SPACE continues.
	# The screen is shown for at least 1 second before SPACE is accepted.
	#
	# Compatible with OpenSesame 4.0.24, xpyriment backend
	# ------------------------------------------------------------
	
	
	# ------------------------------------------------------------
	# Select text variable to present
	# ------------------------------------------------------------
	# Change only this line for each new text screen.
	# Example: text_to_present = use_stylus_msg
	text_to_present = img_domhand_msg
	
	
	# ------------------------------------------------------------
	# Basic settings
	# ------------------------------------------------------------
	REF_HEIGHT = 768.0
	MIN_PRESENTATION_TIME = 1000  # ms
	
	screen_w = int(width)
	screen_h = int(height)
	screen_scale = float(screen_h) / REF_HEIGHT
	
	# Layout
	margin = int(round(48 * screen_scale))
	
	# Main instruction text
	font_size = int(round(24 * screen_scale))
	font_size = max(17, min(32, font_size))
	
	# Advance button text
	button_font_size = int(round(20 * screen_scale))
	button_font_size = max(14, min(26, button_font_size))
	
	button_pad_x = int(round(22 * screen_scale))
	button_pad_y = int(round(12 * screen_scale))
	
	# Uni Innsbruck style
	uibk_orange = '#f39200'
	button_fill_enabled = '#fff7ed'
	button_border_enabled = uibk_orange
	button_text_color = 'black'
	
	
	# ------------------------------------------------------------
	# Helper functions
	# ------------------------------------------------------------
	def clean_html(text):
	    """Keep HTML formatting, but remove unnecessary line breaks."""
	    return str(text).replace('\n', ' ').strip()
	
	
	def ipos(value):
	    """Return an integer pixel position."""
	    return int(round(value))
	
	
	def get_button_layout(button_text):
	    """
	    Return button width, height and font size.
	    The button becomes higher when wrapped dynamic text needs more space.
	    """
	    tmp = Canvas()
	
	    # Use a wider button so multilingual text usually stays readable.
	    button_w = int(round(520 * screen_scale))
	    button_w = max(300, min(int(round(screen_w * 0.72)), button_w))
	
	    min_button_h = max(58, int(round(72 * screen_scale)))
	    preferred_max_h = max(min_button_h, int(round(screen_h * 0.18)))
	
	    usable_w = button_w - 2 * button_pad_x
	    fitted_size = button_font_size
	
	    # First try to keep the button compact by reducing the font only
	    # when the wrapped text would make the button unusually high.
	    while fitted_size >= 12:
	        _, text_h = tmp.text_size(
	            button_text,
	            center=True,
	            max_width=usable_w,
	            font_family='Arial',
	            font_size=fitted_size,
	            html=True
	        )
	
	        needed_h = max(
	            min_button_h,
	            int(round(text_h + 2 * button_pad_y))
	        )
	
	        if needed_h <= preferred_max_h:
	            return button_w, needed_h, fitted_size
	
	        fitted_size -= 1
	
	    # Failsafe for very long dynamic text:
	    # keep the smallest permitted font and make the button high enough.
	    _, text_h = tmp.text_size(
	        button_text,
	        center=True,
	        max_width=usable_w,
	        font_family='Arial',
	        font_size=12,
	        html=True
	    )
	
	    needed_h = max(
	        min_button_h,
	        int(round(text_h + 2 * button_pad_y))
	    )
	
	    return button_w, needed_h, 12
	
	
	def draw_text_screen():
	    """
	    Draw left-aligned instruction text and the centered advance button.
	    Return the screen onset time.
	    """
	    c = Canvas()
	    c.clear(color='white')
	
	    # --------------------------------------------------------
	    # Main text
	    # --------------------------------------------------------
	    main_text = clean_html(text_to_present)
	
	    text_x = -screen_w // 2 + margin
	    text_y = -screen_h // 2 + int(round(78 * screen_scale))
	    text_max_width = screen_w - 2 * margin
	
	    c.text(
	        main_text,
	        center=False,
	        x=ipos(text_x),
	        y=ipos(text_y),
	        max_width=text_max_width,
	        color='black',
	        font_family='Arial',
	        font_size=font_size,
	        html=True
	    )
	
	    # --------------------------------------------------------
	    # Bottom-centered advance button
	    # --------------------------------------------------------
	    button_text = clean_html(adv_msg)
	
	    button_w, button_h, fitted_button_font_size = get_button_layout(
	        button_text
	    )
	
	    button_x = -button_w // 2
	    button_y = screen_h // 2 - margin - button_h
	
	    # Draw button background
	    c.rect(
	        ipos(button_x),
	        ipos(button_y),
	        ipos(button_w),
	        ipos(button_h),
	        fill=True,
	        color=button_fill_enabled,
	        penwidth=0
	    )
	
	    # Draw button border
	    c.rect(
	        ipos(button_x),
	        ipos(button_y),
	        ipos(button_w),
	        ipos(button_h),
	        fill=False,
	        color=button_border_enabled,
	        penwidth=max(1, int(round(2 * screen_scale)))
	    )
	
	    # Draw automatically wrapped button text
	    c.text(
	        button_text,
	        center=True,
	        x=ipos(button_x + button_w / 2),
	        y=ipos(button_y + button_h / 2),
	        max_width=button_w - 2 * button_pad_x,
	        color=button_text_color,
	        font_family='Arial',
	        font_size=fitted_button_font_size,
	        html=True
	    )
	
	    onset_time = c.show()
	
	    return onset_time
	
	
	# ------------------------------------------------------------
	# Safety checks
	# ------------------------------------------------------------
	required_vars = [
	    'adv_msg'
	]
	
	for var_name in required_vars:
	    if var_name not in vars():
	        raise RuntimeError('Required variable is missing: {}'.format(var_name))
	
	
	# ------------------------------------------------------------
	# Main presentation
	# ------------------------------------------------------------
	# Keep cursor hidden, but do not use mouse input for continuing.
	mouse = Mouse(visible=False)
	
	try:
	    mouse.show_cursor(False)
	except Exception:
	    pass
	
	# Draw screen and store onset time.
	onset_time = draw_text_screen()
	
	# Wait until the participant presses SPACE.
	# SPACE is accepted only after the minimum presentation time.
	keyboard = Keyboard(keylist=['space', 'escape'], timeout=1)
	keyboard.flush()
	
	while True:
	    key, key_time = keyboard.get_key(timeout=1)
	
	    if key == 'escape':
	        raise Exception('Aborted with ESC.')
	
	    if key == 'space' and key_time - onset_time >= MIN_PRESENTATION_TIME:
	        break
	
	# Keep cursor hidden.
	try:
	    mouse.show_cursor(False)
	except Exception:
	    pass
	
	print('present_imghand_instr done')
	__end__
	set _prepare ""

define inline_script present_instr_1
	set description "Executes Python code"
	___run__
	# ------------------------------------------------------------
	# present_instr_1
	# Shows instruction text + symbolic task image + start button.
	# After a minimum display time of 10 s, a touch on the button
	# starts a condition-specific animation.
	# After the animation, the instruction screen is shown again
	# with repeat_instr_msg and a next button.
	#
	# Compatible with OpenSesame 4.0.24, xpyriment backend
	# ------------------------------------------------------------
	
	# ------------------------------------------------------------
	# Basic settings
	# ------------------------------------------------------------
	REF_HEIGHT = 768.0
	
	screen_w = int(width)
	screen_h = int(height)
	instr_scale = float(screen_h) / REF_HEIGHT
	
	# Timing
	min_instruction_duration = 10000   # ms
	animation_frame_duration = 200     # ms
	
	# Layout
	margin = int(round(48 * instr_scale))
	gap = int(round(18 * instr_scale))
	
	# Text size
	font_size = int(round(24 * instr_scale))
	font_size = max(17, min(32, font_size))
	
	repeat_font_size = int(round(24 * instr_scale))
	repeat_font_size = max(17, min(32, repeat_font_size))
	
	button_font_size = int(round(20 * instr_scale))
	button_font_size = max(14, min(26, button_font_size))
	
	button_pad_x = int(round(20 * instr_scale))
	button_pad_y = int(round(10 * instr_scale))
	
	# Uni Innsbruck style
	uibk_orange = '#f39200'
	uibk_dark_orange = '#c76a00'
	
	button_fill_enabled = '#fff7ed'   # light orange / cream
	button_fill_disabled = '#e6e6e6'
	button_border_enabled = uibk_orange
	button_border_disabled = '#999999'
	button_text_color = 'black'
	
	
	# ------------------------------------------------------------
	# Helper functions
	# ------------------------------------------------------------
	def clean_html(text):
	    """Keep HTML, but remove leading/trailing whitespace."""
	    return str(text).replace('\n', ' ').strip()
	
	def ipos(value):
	    """Return an integer pixel position."""
	    return int(round(value))
	
	def point_in_rect(pos, x, y, w, h):
	    """Check whether a click position is inside a rectangle."""
	    if pos is None:
	        return False
	    px, py = pos
	    return (x <= px <= x + w) and (y <= py <= y + h)
	
	def resolve_pool_file(candidates):
	    """
	    Return the first matching file from the filepool.
	    This makes the script robust to .png / .PNG naming differences.
	    """
	    for name in candidates:
	        if name in pool:
	            return pool[name]
	
	    # Fallback: compare case-insensitively against all pool names
	    lower_map = {}
	    for key in pool:
	        lower_map[str(key).lower()] = key
	
	    for name in candidates:
	        key = lower_map.get(str(name).lower(), None)
	        if key is not None:
	            return pool[key]
	
	    raise RuntimeError(
	        'None of these files were found in the filepool: {}'.format(candidates)
	    )
	
	
	def fit_button_text(button_text, button_w, button_h, start_font_size):
	    """Reduce button font size until the text fits into the button."""
	    usable_w = button_w - 2 * button_pad_x
	    usable_h = button_h - 2 * button_pad_y
	
	    fitted_size = start_font_size
	    tmp = Canvas()
	
	    while fitted_size >= 12:
	        _, text_h = tmp.text_size(
	            button_text,
	            center=True,
	            max_width=usable_w,
	            font_family='Arial',
	            font_size=fitted_size,
	            html=True
	        )
	
	        if text_h <= usable_h:
	            return fitted_size
	
	        fitted_size -= 1
	
	    return 12
	
	
	def get_instruction_image():
	    """
	    Get the symbolic task image from the filepool.
	    Adjust candidate names only if your image file is named differently.
	    """
	    return resolve_pool_file([
	        'targets.png',
	        'targets.PNG',
	        'screen.png',
	        'screen.PNG'
	    ])
	
	
	def get_animation_frame(prefix, frame_nr):
	    """
	    Get one animation frame from the filepool.
	    Supports both .png and .PNG naming.
	    """
	    return resolve_pool_file([
	        '{}{}.png'.format(prefix, frame_nr),
	        '{}{}.PNG'.format(prefix, frame_nr)
	    ])
	
	
	def draw_instruction_screen(button_text, button_enabled, repeat_text=None):
	    """
	    Draw one instruction screen and return button geometry.
	
	    button_text:
	        Text shown in the bottom-right button.
	
	    button_enabled:
	        If False, button is grey and clicks should be ignored.
	
	    repeat_text:
	        If not None, this line is shown above instr_msg_1.
	    """
	    c = Canvas()
	    c.clear(color='white')
	
	    # --------------------------------------------------------
	    # Text positions
	    # --------------------------------------------------------
	    text_x = -screen_w // 2 + margin
	    text_max_width = screen_w - 2 * margin
	
	    # Text starts slightly lower than before.
	    # If repeat_text is present, repeat line starts here and instr_msg_1 follows below.
	    y_cursor = -screen_h // 2 + int(round(78 * instr_scale))
	
	    # --------------------------------------------------------
	    # Optional repeat line
	    # --------------------------------------------------------
	    if repeat_text is not None:
	        repeat_text = clean_html(repeat_text)
	
	        c.text(
	            repeat_text,
	            center=False,
	            x=ipos(text_x),
	            y=ipos(y_cursor),
	            max_width=text_max_width,
	            color=uibk_dark_orange,
	            font_family='Arial',
	            font_size=repeat_font_size,
	            html=True
	        )
	
	        _, repeat_h = c.text_size(
	            repeat_text,
	            center=False,
	            max_width=text_max_width,
	            font_family='Arial',
	            font_size=repeat_font_size,
	            html=True
	        )
	
	        y_cursor += int(round(repeat_h + 14 * instr_scale))
	
	    # --------------------------------------------------------
	    # Main instruction text
	    # --------------------------------------------------------
	    instr_text = clean_html(instr_msg_1)
	
	    c.text(
	        instr_text,
	        center=False,
	        x=ipos(text_x),
	        y=ipos(y_cursor),
	        max_width=text_max_width,
	        color='black',
	        font_family='Arial',
	        font_size=font_size,
	        html=True
	    )
	
	    _, text_h = c.text_size(
	        instr_text,
	        center=False,
	        max_width=text_max_width,
	        font_family='Arial',
	        font_size=font_size,
	        html=True
	    )
	
	    text_bottom = y_cursor + text_h
	
	    # --------------------------------------------------------
	    # Bottom-right button
	    # --------------------------------------------------------
	    button_text = clean_html(button_text)
	
	    # Base button size
	    button_w = int(round(218 * instr_scale))
	    button_h = int(round(56 * instr_scale))
	
	    # Keep button within reasonable bounds
	    button_w = max(165, min(int(round(screen_w * 0.30)), button_w))
	    button_h = max(44, min(int(round(screen_h * 0.11)), button_h))
	
	    button_x = screen_w // 2 - margin - button_w
	    button_y = screen_h // 2 - margin - button_h
	
	    fitted_button_font_size = fit_button_text(
	        button_text,
	        button_w,
	        button_h,
	        button_font_size
	    )
	
	    # --------------------------------------------------------
	    # Instruction image
	    # --------------------------------------------------------
	    # The image is pushed down, but kept above the button.
	    image_top = max(
	        text_bottom + gap,
	        -screen_h // 2 + int(round(screen_h * 0.64))
	    )
	
	    image_bottom = button_y - gap
	    image_area_h = max(50, image_bottom - image_top)
	
	    # Larger than before.
	    image_area_w = int(round(screen_w * 0.58))
	
	    # Native size estimate for the symbolic image.
	    # Used only for scaling.
	    target_native_w = 904.0
	    target_native_h = 546.0
	
	    image_scale = min(
	        image_area_w / target_native_w,
	        image_area_h / target_native_h
	    )
	
	    # Larger static instruction image.
	    image_scale = image_scale * 1.12
	
	    # Safety clamp: keep image inside screen and below text.
	    image_scale = max(0.10, min(0.48 * instr_scale, image_scale))
	
	    image_x = 0
	    image_y = ipos(image_top + image_area_h / 2)
	    
	    # Draw image from integer top-left coordinates instead of centering it.
	    # Use integer pixel placement to avoid subpixel rendering artifacts.
	    image_left = ipos(image_x - (target_native_w * image_scale) / 2.0)
	    image_top_left = ipos(image_y - (target_native_h * image_scale) / 2.0)
	    
	    c.image(
	        get_instruction_image(),
	        center=False,
	        x=image_left,
	        y=image_top_left,
	        scale=image_scale
	    )
	
	    # --------------------------------------------------------
	    # Draw button
	    # --------------------------------------------------------
	    if button_enabled:
	        fill_color = button_fill_enabled
	        border_color = button_border_enabled
	    else:
	        fill_color = button_fill_disabled
	        border_color = button_border_disabled
	
	    c.rect(
	        ipos(button_x),
	        ipos(button_y),
	        ipos(button_w),
	        ipos(button_h),
	        fill=True,
	        color=fill_color,
	        penwidth=0
	    )
	
	    c.rect(
	        ipos(button_x),
	        ipos(button_y),
	        ipos(button_w),
	        ipos(button_h),
	        fill=False,
	        color=border_color,
	        penwidth=max(1, int(round(2 * instr_scale)))
	    )
	
	    c.text(
	        button_text,
	        center=True,
	        x=int(round(button_x + button_w / 2)),
	        y=int(round(button_y + button_h / 2)),
	        max_width=button_w - 2 * button_pad_x,
	        color=button_text_color,
	        font_family='Arial',
	        font_size=fitted_button_font_size,
	        html=False
	    )
	
	    c.show()
	
	    return button_x, button_y, button_w, button_h
	
	
	def show_animation():
	    """
	    Show the condition-specific animation.
	    No input is accepted during the animation.
	
	    The img*.PNG frames have visually larger targets than the exe*.PNG frames.
	    Therefore, imagery frames are shown somewhat smaller than execution frames,
	    but both are larger than in the previous version.
	    """
	    if trial_mode == 'execution':
	        prefix = 'exe'
	
	        # Execution animation should be larger.
	        condition_anim_factor = 1.22
	
	    elif trial_mode == 'imagery':
	        prefix = 'img'
	
	        # Imagery frames contain visually larger targets.
	        # Still enlarged compared with the previous version.
	        condition_anim_factor = 0.92
	
	    else:
	        raise ValueError('Unknown trial_mode: {}'.format(trial_mode))
	
	    # Native size of animation frames
	    anim_native_w = 960.0
	    anim_native_h = 720.0
	
	    # Allow animation to use almost the full screen, with smaller margins
	    anim_margin = int(round(20 * instr_scale))
	    max_anim_w = screen_w - 2 * anim_margin
	    max_anim_h = screen_h - 2 * anim_margin
	
	    base_anim_scale = min(
	        max_anim_w / anim_native_w,
	        max_anim_h / anim_native_h
	    )
	
	    anim_scale = base_anim_scale * condition_anim_factor
	
	    # Final safety clamp: frame must not exceed the screen.
	    max_safe_scale = min(
	        float(screen_w) / anim_native_w,
	        float(screen_h) / anim_native_h
	    )
	
	    anim_scale = min(anim_scale, max_safe_scale)
	    anim_scale = max(0.10, anim_scale)
	
	    for frame_nr in range(1, 52):
	        frame_file = get_animation_frame(prefix, frame_nr)
	
	        c = Canvas()
	        c.clear(color='white')
	        c.image(
	            frame_file,
	            center=True,
	            x=0,
	            y=0,
	            scale=anim_scale
	        )
	        c.show()
	
	        clock.sleep(animation_frame_duration)
	
	
	# ------------------------------------------------------------
	# Safety checks
	# ------------------------------------------------------------
	required_vars = [
	    'trial_mode',
	    'instr_msg_1',
	    'start_animation_msg',
	    'repeat_instr_msg',
	    'next_msg'
	]
	
	for var_name in required_vars:
	    if var_name not in vars():
	        raise RuntimeError('Required variable is missing: {}'.format(var_name))
	
	
	# ------------------------------------------------------------
	# Main presentation
	# ------------------------------------------------------------
	mouse = Mouse(visible=False)
	
	try:
	    mouse.show_cursor(False)
	except Exception:
	    pass
	
	mouse.flush()
	
	# ------------------------------------------------------------
	# First instruction screen
	# ------------------------------------------------------------
	button_x, button_y, button_w, button_h = draw_instruction_screen(
	    button_text=start_animation_msg,
	    button_enabled=False,
	    repeat_text=None
	)
	
	instruction_onset = clock.time()
	
	# Ignore touches during the minimum display time
	kb = Keyboard(keylist=['escape'], timeout=1)
	kb.flush()
	
	while clock.time() - instruction_onset < min_instruction_duration:
	    button, pos, click_time = mouse.get_click(timeout=50)
	
	    key, key_time = kb.get_key(timeout=1)
	    if key == 'escape':
	        raise Exception('Aborted with ESC.')
	
	# Re-draw with enabled start-animation button
	button_x, button_y, button_w, button_h = draw_instruction_screen(
	    button_text=start_animation_msg,
	    button_enabled=True,
	    repeat_text=None
	)
	
	mouse.flush()
	
	# Wait until the participant touches/clicks the start button
	while True:
	    button, pos, click_time = mouse.get_click(timeout=1)
	
	    key, key_time = kb.get_key(timeout=1)
	    if key == 'escape':
	        raise Exception('Aborted with ESC.')
	
	    if button is not None and point_in_rect(pos, button_x, button_y, button_w, button_h):
	        break
	
	# Keep cursor hidden during animation
	try:
	    mouse.show_cursor(False)
	except Exception:
	    pass
	
	# ------------------------------------------------------------
	# Animation
	# ------------------------------------------------------------
	show_animation()
	
	# Keep cursor hidden after animation as well
	try:
	    mouse.show_cursor(False)
	except Exception:
	    pass
	
	# ------------------------------------------------------------
	# Repeat instruction screen after animation
	# ------------------------------------------------------------
	button_x, button_y, button_w, button_h = draw_instruction_screen(
	    button_text=next_msg,
	    button_enabled=True,
	    repeat_text=repeat_instr_msg
	)
	
	mouse.flush()
	
	# Wait until the participant touches/clicks the next button
	while True:
	    button, pos, click_time = mouse.get_click(timeout=1)
	
	    key, key_time = kb.get_key(timeout=1)
	    if key == 'escape':
	        raise Exception('Aborted with ESC.')
	
	    if button is not None and point_in_rect(pos, button_x, button_y, button_w, button_h):
	        break
	
	print('present_instr_1 done')
	print('trial_mode =', trial_mode)
	__end__
	set _prepare ""

define inline_script present_instr_2
	set description "Executes Python code"
	___run__
	# ------------------------------------------------------------
	# present_text_screen_with_image
	# Shows one dynamic text variable left-aligned on the screen.
	# Shows the image stored in instr_img below the text and above the button.
	# A bottom-right button with next_msg continues to the next item.
	# The screen is shown for at least 2 seconds before clicks are accepted.
	#
	# Compatible with OpenSesame 4.0.24, xpyriment backend
	# ------------------------------------------------------------
	
	from PIL import Image
	
	# ------------------------------------------------------------
	# Select text variable to present
	# ------------------------------------------------------------
	# Change only this line for each new text screen.
	text_to_present = instr_msg_2
	
	# ------------------------------------------------------------
	# Basic settings
	# ------------------------------------------------------------
	REF_HEIGHT = 768.0
	MIN_PRESENTATION_TIME = 700  # ms
	
	screen_w = int(width)
	screen_h = int(height)
	screen_scale = float(screen_h) / REF_HEIGHT
	
	# Layout
	margin = int(round(48 * screen_scale))
	gap = int(round(18 * screen_scale))
	
	# Same general text size as present_instr_1
	font_size = int(round(24 * screen_scale))
	font_size = max(17, min(32, font_size))
	
	button_font_size = int(round(20 * screen_scale))
	button_font_size = max(14, min(26, button_font_size))
	
	button_pad_x = int(round(20 * screen_scale))
	button_pad_y = int(round(10 * screen_scale))
	
	# Uni Innsbruck style
	uibk_orange = '#f39200'
	button_fill_enabled = '#fff7ed'   # light orange / cream
	button_border_enabled = uibk_orange
	button_text_color = 'black'
	
	
	# ------------------------------------------------------------
	# Helper functions
	# ------------------------------------------------------------
	def clean_html(text):
	    """Keep HTML, but remove leading/trailing whitespace."""
	    return str(text).replace('\n', ' ').strip()
	
	def ipos(value):
	    """Return an integer pixel position."""
	    return int(round(value))
	
	def point_in_rect(pos, x, y, w, h):
	    """Check whether a click position is inside a rectangle."""
	    if pos is None:
	        return False
	    px, py = pos
	    return (x <= px <= x + w) and (y <= py <= y + h)
	
	
	def resolve_pool_file(candidates):
	    """
	    Return the first matching file from the filepool.
	    This makes the script robust to .png / .PNG naming differences.
	    """
	    for name in candidates:
	        if name in pool:
	            return pool[name]
	
	    # Fallback: compare case-insensitively against all pool names
	    lower_map = {}
	    for key in pool:
	        lower_map[str(key).lower()] = key
	
	    for name in candidates:
	        key = lower_map.get(str(name).lower(), None)
	        if key is not None:
	            return pool[key]
	
	    raise RuntimeError(
	        'None of these files were found in the filepool: {}'.format(candidates)
	    )
	
	
	def get_screen_image():
	    """
	    Get the image for this instruction screen from instr_img.
	    instr_img should contain the filename, for example:
	    accurate_exe.png or accurate_img.png
	    """
	    img_name = clean_html(instr_img)
	
	    return resolve_pool_file([
	        img_name,
	        img_name.replace('.png', '.PNG'),
	        img_name.replace('.PNG', '.png')
	    ])
	
	
	def get_image_size(image_path):
	    """
	    Read the actual pixel size of the image.
	    This avoids wrong scaling when the imported image size changes.
	    """
	    img = Image.open(image_path)
	    return float(img.size[0]), float(img.size[1])
	
	
	def fit_button_text(button_text, button_w, button_h, start_font_size):
	    """Reduce button font size until the text fits into the button."""
	    usable_w = button_w - 2 * button_pad_x
	    usable_h = button_h - 2 * button_pad_y
	
	    fitted_size = start_font_size
	    tmp = Canvas()
	
	    while fitted_size >= 12:
	        _, text_h = tmp.text_size(
	            button_text,
	            center=True,
	            max_width=usable_w,
	            font_family='Arial',
	            font_size=fitted_size,
	            html=True
	        )
	
	        if text_h <= usable_h:
	            return fitted_size
	
	        fitted_size -= 1
	
	    return 12
	
	
	def draw_text_screen():
	    """
	    Draw left-aligned text, image, and bottom-right next button.
	    Returns button geometry.
	    """
	    c = Canvas()
	    c.clear(color='white')
	
	    # --------------------------------------------------------
	    # Main text
	    # --------------------------------------------------------
	    main_text = clean_html(text_to_present)
	
	    text_x = -screen_w // 2 + margin
	    text_y = -screen_h // 2 + int(round(78 * screen_scale))
	    text_max_width = screen_w - 2 * margin
	
	    c.text(
	        main_text,
	        center=False,
	        x=ipos(text_x),
	        y=ipos(text_y),
	        max_width=text_max_width,
	        color='black',
	        font_family='Arial',
	        font_size=font_size,
	        html=True
	    )
	
	    # Measure text height so the image can be placed below it
	    _, text_h = c.text_size(
	        main_text,
	        center=False,
	        max_width=text_max_width,
	        font_family='Arial',
	        font_size=font_size,
	        html=True
	    )
	
	    text_bottom = text_y + text_h
	
	    # --------------------------------------------------------
	    # Bottom-right next button
	    # --------------------------------------------------------
	    button_text = clean_html(next_msg)
	
	    button_w = int(round(218 * screen_scale))
	    button_h = int(round(56 * screen_scale))
	
	    # Keep button within reasonable bounds
	    button_w = max(165, min(int(round(screen_w * 0.30)), button_w))
	    button_h = max(44, min(int(round(screen_h * 0.11)), button_h))
	
	    button_x = screen_w // 2 - margin - button_w
	    button_y = screen_h // 2 - margin - button_h
	
	    fitted_button_font_size = fit_button_text(
	        button_text,
	        button_w,
	        button_h,
	        button_font_size
	    )
	
	    # --------------------------------------------------------
	    # Image below text and above button
	    # --------------------------------------------------------
	    image_path = get_screen_image()
	    image_native_w, image_native_h = get_image_size(image_path)
	
	    # Available horizontal image area.
	    image_area_x = -screen_w // 2 + margin
	    image_area_w = screen_w - 2 * margin
	
	    # Available vertical image area.
	    # The image must be below the text and above the button.
	    image_top = text_bottom + gap
	    image_bottom = button_y - gap
	
	    # If the text is short, keep the image visually in the lower half.
	    lower_half_top = -screen_h // 2 + int(round(screen_h * 0.52))
	    image_top = max(image_top, lower_half_top)
	
	    image_area_h = image_bottom - image_top
	
	    # Safety fallback: If there is very little space between text and button,
	    # still keep the image within the screen and above the button.
	    if image_area_h < 40:
	        image_top = text_bottom + gap
	        image_bottom = button_y - gap
	        image_area_h = max(40, image_bottom - image_top)
	
	    # Scale image only as much as needed so it fits into the available area.
	    # No condition-specific scaling is applied for accurate_exe vs accurate_img.
	    image_scale = min(
	        0.5,
	        image_area_w / image_native_w,
	        image_area_h / image_native_h
	    )
	
	    # Prevent invalid or extremely tiny scale values
	    image_scale = max(0.05, image_scale)
	
	    image_w = ipos(image_native_w * image_scale)
	    image_h = ipos(image_native_h * image_scale)
	
	    # Center the image inside the allowed area.
	    # Use integer top-left coordinates and center=False.
	    image_left = ipos(image_area_x + (image_area_w - image_w) / 2.0)
	    image_top_left = ipos(image_top + (image_area_h - image_h) / 2.0)
	
	    # Final safety clamp: keep image inside screen margins and above button.
	    min_left = -screen_w // 2 + margin
	    max_left = screen_w // 2 - margin - image_w
	    image_left = max(min_left, min(max_left, image_left))
	
	    min_top = ipos(text_bottom + gap)
	    max_top = ipos(button_y - gap - image_h)
	    image_top_left = max(min_top, min(max_top, image_top_left))
	
	    c.image(
	        image_path,
	        center=False,
	        x=ipos(image_left),
	        y=ipos(image_top_left),
	        scale=image_scale
	    )
	
	    # --------------------------------------------------------
	    # Draw button rectangle
	    # --------------------------------------------------------
	    c.rect(
	        ipos(button_x),
	        ipos(button_y),
	        ipos(button_w),
	        ipos(button_h),
	        fill=True,
	        color=button_fill_enabled,
	        penwidth=0
	    )
	
	    # Draw button border
	    c.rect(
	        ipos(button_x),
	        ipos(button_y),
	        ipos(button_w),
	        ipos(button_h),
	        fill=False,
	        color=button_border_enabled,
	        penwidth=max(1, int(round(2 * screen_scale)))
	    )
	
	    # Draw button text
	    c.text(
	        button_text,
	        center=True,
	        x=ipos(button_x + button_w / 2),
	        y=ipos(button_y + button_h / 2),
	        max_width=button_w - 2 * button_pad_x,
	        color=button_text_color,
	        font_family='Arial',
	        font_size=fitted_button_font_size,
	        html=False
	    )
	
	    onset_time = c.show()
	
	    return button_x, button_y, button_w, button_h, onset_time
	
	
	# ------------------------------------------------------------
	# Safety checks
	# ------------------------------------------------------------
	required_vars = [
	    'next_msg',
	    'instr_img'
	]
	
	for var_name in required_vars:
	    if var_name not in vars():
	        raise RuntimeError('Required variable is missing: {}'.format(var_name))
	
	
	# ------------------------------------------------------------
	# Main presentation
	# ------------------------------------------------------------
	mouse = Mouse(visible=False)
	
	try:
	    mouse.show_cursor(False)
	except Exception:
	    pass
	
	mouse.flush()
	
	# Draw screen and store onset time
	button_x, button_y, button_w, button_h, onset_time = draw_text_screen()
	
	# Wait until participant touches/clicks the next button,
	# but accept clicks only after the minimum presentation time.
	kb = Keyboard(keylist=['escape'], timeout=1)
	kb.flush()
	
	while True:
	    button, pos, click_time = mouse.get_click(timeout=1)
	
	    key, key_time = kb.get_key(timeout=1)
	    if key == 'escape':
	        raise Exception('Aborted with ESC.')
	
	    if button is None:
	        continue
	
	    if click_time - onset_time < MIN_PRESENTATION_TIME:
	        continue
	
	    if point_in_rect(pos, button_x, button_y, button_w, button_h):
	        break
	
	# Keep cursor hidden
	try:
	    mouse.show_cursor(False)
	except Exception:
	    pass
	
	print('present_text_screen_with_image done')
	print('instr_img =', instr_img)
	__end__
	set _prepare ""

define inline_script present_instr_3_4
	set description "Executes Python code"
	___run__
	# ------------------------------------------------------------
	# present_instr_3_4
	# Presents instr_msg_3 and instr_msg_4 on separate screens.
	# Each screen has a bottom-right next button.
	# The screen is shown for at least 700 ms before clicks are accepted.
	#
	# Compatible with OpenSesame 4.0.24, xpyriment backend
	# ------------------------------------------------------------
	
	# ------------------------------------------------------------
	# Texts to present
	# ------------------------------------------------------------
	instruction_texts = [
	    instr_msg_3,
	    instr_msg_4
	]
	
	
	# ------------------------------------------------------------
	# Basic settings
	# ------------------------------------------------------------
	REF_HEIGHT = 768.0
	MIN_PRESENTATION_TIME = 700  # ms
	
	screen_w = int(width)
	screen_h = int(height)
	screen_scale = float(screen_h) / REF_HEIGHT
	
	# Layout
	margin = int(round(48 * screen_scale))
	
	# Same general text size as other instruction screens
	font_size = int(round(24 * screen_scale))
	font_size = max(17, min(32, font_size))
	
	button_font_size = int(round(20 * screen_scale))
	button_font_size = max(14, min(26, button_font_size))
	
	button_pad_x = int(round(20 * screen_scale))
	button_pad_y = int(round(10 * screen_scale))
	
	# Uni Innsbruck style
	uibk_orange = '#f39200'
	button_fill_enabled = '#fff7ed'   # light orange / cream
	button_border_enabled = uibk_orange
	button_text_color = 'black'
	
	
	# ------------------------------------------------------------
	# Helper functions
	# ------------------------------------------------------------
	def clean_html(text):
	    """Keep HTML, but remove leading/trailing whitespace."""
	    return str(text).replace('\n', ' ').strip()
	
	def ipos(value):
	    """Return an integer pixel position."""
	    return int(round(value))
	
	def point_in_rect(pos, x, y, w, h):
	    """Check whether a click position is inside a rectangle."""
	    if pos is None:
	        return False
	    px, py = pos
	    return (x <= px <= x + w) and (y <= py <= y + h)
	
	def fit_button_text(button_text, button_w, button_h, start_font_size):
	    """Reduce button font size until the text fits into the button."""
	    usable_w = button_w - 2 * button_pad_x
	    usable_h = button_h - 2 * button_pad_y
	
	    fitted_size = start_font_size
	    tmp = Canvas()
	
	    while fitted_size >= 12:
	        _, text_h = tmp.text_size(
	            button_text,
	            center=True,
	            max_width=usable_w,
	            font_family='Arial',
	            font_size=fitted_size,
	            html=True
	        )
	
	        if text_h <= usable_h:
	            return fitted_size
	
	        fitted_size -= 1
	
	    return 12
	
	
	def draw_text_screen(text_to_present):
	    """
	    Draw one left-aligned text screen and bottom-right next button.
	    Returns button geometry and screen onset time.
	    """
	    c = Canvas()
	    c.clear(color='white')
	
	    # --------------------------------------------------------
	    # Main text
	    # --------------------------------------------------------
	    main_text = clean_html(text_to_present)
	
	    text_x = -screen_w // 2 + margin
	    text_y = -screen_h // 2 + int(round(78 * screen_scale))
	    text_max_width = screen_w - 2 * margin
	
	    c.text(
	        main_text,
	        center=False,
	        x=ipos(text_x),
	        y=ipos(text_y),
	        max_width=text_max_width,
	        color='black',
	        font_family='Arial',
	        font_size=font_size,
	        html=True
	    )
	
	    # --------------------------------------------------------
	    # Bottom-right next button
	    # --------------------------------------------------------
	    button_text = clean_html(next_msg)
	
	    button_w = int(round(218 * screen_scale))
	    button_h = int(round(56 * screen_scale))
	
	    button_w = max(165, min(int(round(screen_w * 0.30)), button_w))
	    button_h = max(44, min(int(round(screen_h * 0.11)), button_h))
	
	    button_x = screen_w // 2 - margin - button_w
	    button_y = screen_h // 2 - margin - button_h
	
	    fitted_button_font_size = fit_button_text(
	        button_text,
	        button_w,
	        button_h,
	        button_font_size
	    )
	
	    # Draw button rectangle
	    c.rect(
	        ipos(button_x),
	        ipos(button_y),
	        ipos(button_w),
	        ipos(button_h),
	        fill=True,
	        color=button_fill_enabled,
	        penwidth=0
	    )
	
	    # Draw button border
	    c.rect(
	        button_x,
	        button_y,
	        button_w,
	        button_h,
	        fill=False,
	        color=button_border_enabled,
	        penwidth=max(1, int(round(2 * screen_scale)))
	    )
	
	    # Draw button text
	    c.text(
	        button_text,
	        center=True,
	        x=ipos(button_x + button_w / 2),
	        y=ipos(button_y + button_h / 2),
	        max_width=button_w - 2 * button_pad_x,
	        color=button_text_color,
	        font_family='Arial',
	        font_size=fitted_button_font_size,
	        html=False
	    )
	
	    onset_time = c.show()
	
	    return button_x, button_y, button_w, button_h, onset_time
	
	
	def wait_for_next_button(button_x, button_y, button_w, button_h, onset_time):
	    """
	    Wait until participant touches/clicks the next button.
	    Clicks are accepted only after the minimum presentation time.
	    """
	    mouse.flush()
	
	    kb = Keyboard(keylist=['escape'], timeout=1)
	    kb.flush()
	    
	    while True:
	        button, pos, click_time = mouse.get_click(timeout=1)
	    
	        key, key_time = kb.get_key(timeout=1)
	        if key == 'escape':
	            raise Exception('Aborted with ESC.')
	    
	        if button is None:
	            continue
	    
	        if click_time - onset_time < MIN_PRESENTATION_TIME:
	            continue
	    
	        if point_in_rect(pos, button_x, button_y, button_w, button_h):
	            break
	
	
	# ------------------------------------------------------------
	# Safety checks
	# ------------------------------------------------------------
	required_vars = [
	    'instr_msg_3',
	    'instr_msg_4',
	    'next_msg'
	]
	
	for var_name in required_vars:
	    if var_name not in vars():
	        raise RuntimeError('Required variable is missing: {}'.format(var_name))
	
	
	# ------------------------------------------------------------
	# Main presentation
	# ------------------------------------------------------------
	mouse = Mouse(visible=False)
	
	try:
	    mouse.show_cursor(False)
	except Exception:
	    pass
	
	for instruction_text in instruction_texts:
	    button_x, button_y, button_w, button_h, onset_time = draw_text_screen(instruction_text)
	    wait_for_next_button(button_x, button_y, button_w, button_h, onset_time)
	
	# Keep cursor hidden
	try:
	    mouse.show_cursor(False)
	except Exception:
	    pass
	
	print('present_instr_3_4 done')
	__end__
	set _prepare ""

define inline_script present_new_condition
	set description "Executes Python code"
	___run__
	# ------------------------------------------------------------
	# present_text_screen
	# Shows one dynamic text variable left-aligned on the screen.
	#
	# For both trial modes:
	#   bottom-right next button with next_msg, continue by touch/click.
	#
	# The screen is shown for at least 2 seconds before responses are accepted.
	#
	# Compatible with OpenSesame 4.0.24, xpyriment backend
	# ------------------------------------------------------------
	
	# ------------------------------------------------------------
	# Select text variable to present
	# ------------------------------------------------------------
	# Change only this line for each new text screen.
	# Example: text_to_present = use_stylus_msg
	text_to_present = new_condition_msg
	
	
	# ------------------------------------------------------------
	# Basic settings
	# ------------------------------------------------------------
	REF_HEIGHT = 768.0
	MIN_PRESENTATION_TIME = 1000  # ms
	
	screen_w = int(width)
	screen_h = int(height)
	screen_scale = float(screen_h) / REF_HEIGHT
	
	# Layout
	margin = int(round(48 * screen_scale))
	
	# Same general text size as present_instr_1
	font_size = int(round(24 * screen_scale))
	font_size = max(17, min(32, font_size))
	
	button_font_size = int(round(20 * screen_scale))
	button_font_size = max(14, min(26, button_font_size))
	
	button_pad_x = int(round(20 * screen_scale))
	button_pad_y = int(round(10 * screen_scale))
	
	# Uni Innsbruck style
	uibk_orange = '#f39200'
	button_fill_enabled = '#fff7ed'   # light orange / cream
	button_border_enabled = uibk_orange
	button_text_color = 'black'
	
	
	# ------------------------------------------------------------
	# Helper functions
	# ------------------------------------------------------------
	def clean_html(text):
	    """Keep HTML, but remove leading/trailing whitespace."""
	    return str(text).replace('\n', ' ').strip()
	
	def ipos(value):
	    """Return an integer pixel position."""
	    return int(round(value))
	
	def point_in_rect(pos, x, y, w, h):
	    """Check whether a click position is inside a rectangle."""
	    if pos is None:
	        return False
	
	    px, py = pos
	    return (x <= px <= x + w) and (y <= py <= y + h)
	
	def fit_button_text(button_text, button_w, button_h, start_font_size):
	    """Reduce button font size until the text fits into the box."""
	    usable_w = button_w - 2 * button_pad_x
	    usable_h = button_h - 2 * button_pad_y
	
	    fitted_size = start_font_size
	    tmp = Canvas()
	
	    while fitted_size >= 12:
	        _, text_h = tmp.text_size(
	            button_text,
	            center=True,
	            max_width=usable_w,
	            font_family='Arial',
	            font_size=fitted_size,
	            html=True
	        )
	
	        if text_h <= usable_h:
	            return fitted_size
	
	        fitted_size -= 1
	
	    return 12
	
	def draw_text_screen():
	    """
	    Draw left-aligned text and the bottom-right next box.
	    Returns button geometry and screen onset time.
	    """
	    c = Canvas()
	    c.clear(color='white')
	
	    # --------------------------------------------------------
	    # Main text
	    # --------------------------------------------------------
	    main_text = clean_html(text_to_present)
	
	    text_x = -screen_w // 2 + margin
	    text_y = -screen_h // 2 + int(round(78 * screen_scale))
	    text_max_width = screen_w - 2 * margin
	
	    c.text(
	        main_text,
	        center=False,
	        x=ipos(text_x),
	        y=ipos(text_y),
	        max_width=text_max_width,
	        color='black',
	        font_family='Arial',
	        font_size=font_size,
	        html=True
	    )
	
	    # --------------------------------------------------------
	    # Bottom-right next box
	    # --------------------------------------------------------
	    button_text = clean_html(next_msg)
	
	    button_w = int(round(218 * screen_scale))
	    button_h = int(round(56 * screen_scale))
	
	    button_w = max(165, min(int(round(screen_w * 0.35)), button_w))
	    button_h = max(44, min(int(round(screen_h * 0.11)), button_h))
	
	    button_x = screen_w // 2 - margin - button_w
	    button_y = screen_h // 2 - margin - button_h
	
	    fitted_button_font_size = fit_button_text(
	        button_text,
	        button_w,
	        button_h,
	        button_font_size
	    )
	
	    # Draw box rectangle
	    c.rect(
	        ipos(button_x),
	        ipos(button_y),
	        ipos(button_w),
	        ipos(button_h),
	        fill=True,
	        color=button_fill_enabled,
	        penwidth=0
	    )
	
	    # Draw box border
	    c.rect(
	        ipos(button_x),
	        ipos(button_y),
	        ipos(button_w),
	        ipos(button_h),
	        fill=False,
	        color=button_border_enabled,
	        penwidth=max(1, int(round(2 * screen_scale)))
	    )
	
	    # Draw box text
	    c.text(
	        button_text,
	        center=True,
	        x=ipos(button_x + button_w / 2),
	        y=ipos(button_y + button_h / 2),
	        max_width=button_w - 2 * button_pad_x,
	        color=button_text_color,
	        font_family='Arial',
	        font_size=fitted_button_font_size,
	        html=False
	    )
	
	    onset_time = c.show()
	
	    return button_x, button_y, button_w, button_h, onset_time
	
	
	# ------------------------------------------------------------
	# Safety checks
	# ------------------------------------------------------------
	required_vars = [
	    'next_msg'
	]
	
	for var_name in required_vars:
	    if var_name not in vars():
	        raise RuntimeError('Required variable is missing: {}'.format(var_name))
	
	
	# ------------------------------------------------------------
	# Main presentation
	# ------------------------------------------------------------
	mouse = Mouse(visible=False)
	
	try:
	    mouse.show_cursor(False)
	except Exception:
	    pass
	
	# Draw screen
	button_x, button_y, button_w, button_h, onset_time = draw_text_screen()
	
	
	# ------------------------------------------------------------
	# Response handling
	# ------------------------------------------------------------
	mouse.flush()
	
	kb = Keyboard(keylist=['escape'], timeout=1)
	kb.flush()
	
	while True:
	    button, pos, click_time = mouse.get_click(timeout=1)
	
	    key, key_time = kb.get_key(timeout=1)
	    if key == 'escape':
	        raise Exception('Aborted with ESC.')
	
	    if button is None:
	        continue
	
	    if click_time - onset_time < MIN_PRESENTATION_TIME:
	        continue
	
	    if point_in_rect(pos, button_x, button_y, button_w, button_h):
	        break
	
	# Keep cursor hidden
	try:
	    mouse.show_cursor(False)
	except Exception:
	    pass
	
	print('present_new_condition done')
	__end__
	set _prepare ""

define inline_script present_practbl_instr
	set description "Executes Python code"
	___run__
	# ------------------------------------------------------------
	# present_text_screen
	# Shows one dynamic text variable left-aligned on the screen.
	#
	# If trial_mode == "execution":
	#   bottom-right next button with next_msg, continue by touch/click.
	#
	# Otherwise, e.g. imagery:
	#   bottom-centered advance box with adv_msg, continue by SPACE.
	#
	# The screen is shown for at least 1 second before responses are accepted.
	#
	# Compatible with OpenSesame 4.0.24, xpyriment backend
	# ------------------------------------------------------------
	
	
	# ------------------------------------------------------------
	# Select text variable to present
	# ------------------------------------------------------------
	# Change only this line for each new text screen.
	# Example: text_to_present = use_stylus_msg
	text_to_present = practbl_msg
	
	
	# ------------------------------------------------------------
	# Basic settings
	# ------------------------------------------------------------
	REF_HEIGHT = 768.0
	MIN_PRESENTATION_TIME = 1000  # ms
	
	screen_w = int(width)
	screen_h = int(height)
	screen_scale = float(screen_h) / REF_HEIGHT
	
	# Layout
	margin = int(round(48 * screen_scale))
	
	# Main instruction text
	font_size = int(round(24 * screen_scale))
	font_size = max(17, min(32, font_size))
	
	# Button text
	button_font_size = int(round(20 * screen_scale))
	button_font_size = max(14, min(26, button_font_size))
	
	button_pad_x = int(round(22 * screen_scale))
	button_pad_y = int(round(12 * screen_scale))
	
	# Uni Innsbruck style
	uibk_orange = '#f39200'
	button_fill_enabled = '#fff7ed'
	button_border_enabled = uibk_orange
	button_text_color = 'black'
	
	
	# ------------------------------------------------------------
	# Helper functions
	# ------------------------------------------------------------
	def clean_html(text):
	    """Keep HTML formatting, but remove unnecessary line breaks."""
	    return str(text).replace('\n', ' ').strip()
	
	
	def ipos(value):
	    """Return an integer pixel position."""
	    return int(round(value))
	
	
	def point_in_rect(pos, x, y, w, h):
	    """Check whether a click or touch position is inside a rectangle."""
	    if pos is None:
	        return False
	
	    px, py = pos
	    return (x <= px <= x + w) and (y <= py <= y + h)
	
	
	def get_button_layout(button_text, button_type):
	    """
	    Return button width, height and font size.
	    Wrapped dynamic text always remains inside the button.
	    """
	    tmp = Canvas()
	
	    if button_type == 'next':
	        # Bottom-right touch button for execution condition
	        button_w = int(round(300 * screen_scale))
	        button_w = max(190, min(int(round(screen_w * 0.45)), button_w))
	
	        min_button_h = max(44, int(round(56 * screen_scale)))
	        preferred_max_h = max(min_button_h, int(round(screen_h * 0.16)))
	
	    else:
	        # Bottom-centered SPACE button for imagery condition
	        button_w = int(round(520 * screen_scale))
	        button_w = max(300, min(int(round(screen_w * 0.72)), button_w))
	
	        min_button_h = max(58, int(round(72 * screen_scale)))
	        preferred_max_h = max(min_button_h, int(round(screen_h * 0.18)))
	
	    usable_w = button_w - 2 * button_pad_x
	    fitted_size = button_font_size
	
	    # Reduce font size only if the wrapped text would make
	    # the button unusually high.
	    while fitted_size >= 12:
	        _, text_h = tmp.text_size(
	            button_text,
	            center=True,
	            max_width=usable_w,
	            font_family='Arial',
	            font_size=fitted_size,
	            html=True
	        )
	
	        needed_h = max(
	            min_button_h,
	            int(round(text_h + 2 * button_pad_y))
	        )
	
	        if needed_h <= preferred_max_h:
	            return button_w, needed_h, fitted_size
	
	        fitted_size -= 1
	
	    # Failsafe for very long localized text:
	    # keep font size 12 and enlarge the button enough.
	    _, text_h = tmp.text_size(
	        button_text,
	        center=True,
	        max_width=usable_w,
	        font_family='Arial',
	        font_size=12,
	        html=True
	    )
	
	    needed_h = max(
	        min_button_h,
	        int(round(text_h + 2 * button_pad_y))
	    )
	
	    return button_w, needed_h, 12
	
	
	def draw_text_screen():
	    """
	    Draw left-aligned instruction text and the correct advance button.
	    Return button geometry and screen onset time.
	    """
	    c = Canvas()
	    c.clear(color='white')
	
	    # --------------------------------------------------------
	    # Main text
	    # --------------------------------------------------------
	    main_text = clean_html(text_to_present)
	
	    text_x = -screen_w // 2 + margin
	    text_y = -screen_h // 2 + int(round(78 * screen_scale))
	    text_max_width = screen_w - 2 * margin
	
	    c.text(
	        main_text,
	        center=False,
	        x=ipos(text_x),
	        y=ipos(text_y),
	        max_width=text_max_width,
	        color='black',
	        font_family='Arial',
	        font_size=font_size,
	        html=True
	    )
	
	    # --------------------------------------------------------
	    # Advance button
	    # --------------------------------------------------------
	    if trial_mode == 'execution':
	        button_text = clean_html(next_msg)
	
	        button_w, button_h, fitted_button_font_size = get_button_layout(
	            button_text,
	            'next'
	        )
	
	        # Bottom-right position
	        button_x = screen_w // 2 - margin - button_w
	
	    else:
	        button_text = clean_html(adv_msg)
	
	        button_w, button_h, fitted_button_font_size = get_button_layout(
	            button_text,
	            'space'
	        )
	
	        # Bottom-centered position
	        button_x = -button_w // 2
	
	    button_y = screen_h // 2 - margin - button_h
	
	    # Draw button background
	    c.rect(
	        ipos(button_x),
	        ipos(button_y),
	        ipos(button_w),
	        ipos(button_h),
	        fill=True,
	        color=button_fill_enabled,
	        penwidth=0
	    )
	
	    # Draw button border
	    c.rect(
	        ipos(button_x),
	        ipos(button_y),
	        ipos(button_w),
	        ipos(button_h),
	        fill=False,
	        color=button_border_enabled,
	        penwidth=max(1, int(round(2 * screen_scale)))
	    )
	
	    # Draw automatically wrapped button text
	    c.text(
	        button_text,
	        center=True,
	        x=ipos(button_x + button_w / 2),
	        y=ipos(button_y + button_h / 2),
	        max_width=button_w - 2 * button_pad_x,
	        color=button_text_color,
	        font_family='Arial',
	        font_size=fitted_button_font_size,
	        html=True
	    )
	
	    onset_time = c.show()
	
	    return button_x, button_y, button_w, button_h, onset_time
	
	
	# ------------------------------------------------------------
	# Safety checks
	# ------------------------------------------------------------
	required_vars = [
	    'trial_mode'
	]
	
	if trial_mode == 'execution':
	    required_vars.append('next_msg')
	else:
	    required_vars.append('adv_msg')
	
	for var_name in required_vars:
	    if var_name not in vars():
	        raise RuntimeError('Required variable is missing: {}'.format(var_name))
	
	
	# ------------------------------------------------------------
	# Main presentation
	# ------------------------------------------------------------
	mouse = Mouse(visible=False)
	
	try:
	    mouse.show_cursor(False)
	except Exception:
	    pass
	
	# Draw screen and store button geometry and onset time.
	button_x, button_y, button_w, button_h, onset_time = draw_text_screen()
	
	
	# ------------------------------------------------------------
	# Response handling
	# ------------------------------------------------------------
	if trial_mode == 'execution':
	
	    # Continue only when the bottom-right button is touched or clicked.
	    # Responses are accepted only after the minimum presentation time.
	    mouse.flush()
	
	    kb = Keyboard(keylist=['escape'], timeout=1)
	    kb.flush()
	
	    while True:
	        button, pos, click_time = mouse.get_click(timeout=1)
	
	        key, key_time = kb.get_key(timeout=1)
	        if key == 'escape':
	            raise Exception('Aborted with ESC.')
	
	        if button is None:
	            continue
	
	        if click_time - onset_time < MIN_PRESENTATION_TIME:
	            continue
	
	        if point_in_rect(pos, button_x, button_y, button_w, button_h):
	            break
	
	else:
	
	    # Continue only when SPACE is pressed.
	    # SPACE is accepted only after the minimum presentation time.
	    keyboard = Keyboard(keylist=['space', 'escape'], timeout=1)
	    keyboard.flush()
	
	    while True:
	        key, key_time = keyboard.get_key(timeout=1)
	
	        if key == 'escape':
	            raise Exception('Aborted with ESC.')
	
	        if key == 'space' and key_time - onset_time >= MIN_PRESENTATION_TIME:
	            break
	
	
	# Keep cursor hidden.
	try:
	    mouse.show_cursor(False)
	except Exception:
	    pass
	
	print('present_practbl_instr done')
	__end__
	set _prepare ""

define inline_script present_stylus_instr
	set description "Executes Python code"
	___run__
	# ------------------------------------------------------------
	# present_text_screen
	# Shows one dynamic text variable left-aligned on the screen.
	# A bottom-right button with next_msg continues to the next item.
	#
	# Compatible with OpenSesame 4.0.24, xpyriment backend
	# ------------------------------------------------------------
	
	# ------------------------------------------------------------
	# Select text variable to present
	# ------------------------------------------------------------
	# Change only this line for each new text screen.
	# Example: text_to_present = use_stylus_msg
	text_to_present = use_stylus_msg
	
	
	# ------------------------------------------------------------
	# Basic settings
	# ------------------------------------------------------------
	REF_HEIGHT = 768.0
	
	screen_w = int(width)
	screen_h = int(height)
	screen_scale = float(screen_h) / REF_HEIGHT
	
	# Layout
	margin = int(round(48 * screen_scale))
	
	# Same general text size as present_instr_1
	font_size = int(round(24 * screen_scale))
	font_size = max(17, min(32, font_size))
	
	button_font_size = int(round(20 * screen_scale))
	button_font_size = max(14, min(26, button_font_size))
	
	button_pad_x = int(round(20 * screen_scale))
	button_pad_y = int(round(10 * screen_scale))
	
	# Uni Innsbruck style
	uibk_orange = '#f39200'
	button_fill_enabled = '#fff7ed'   # light orange / cream
	button_border_enabled = uibk_orange
	button_text_color = 'black'
	
	
	# ------------------------------------------------------------
	# Helper functions
	# ------------------------------------------------------------
	def clean_html(text):
	    """Keep HTML, but remove leading/trailing whitespace."""
	    return str(text).replace('\n', ' ').strip()
	
	def ipos(value):
	    """Return an integer pixel position."""
	    return int(round(value))
	
	def point_in_rect(pos, x, y, w, h):
	    """Check whether a click position is inside a rectangle."""
	    if pos is None:
	        return False
	    px, py = pos
	    return (x <= px <= x + w) and (y <= py <= y + h)
	    
	def normalize_mouse_pos(raw_pos):
	    """Return a clean (x, y) tuple."""
	    if isinstance(raw_pos, tuple) and len(raw_pos) == 2:
	        if isinstance(raw_pos[0], tuple) and len(raw_pos[0]) == 2:
	            pos = raw_pos[0]
	        else:
	            pos = raw_pos
	    else:
	        pos = raw_pos
	
	    return (int(pos[0]), int(pos[1]))
	
	
	def wait_for_first_touch_button(button_x, button_y, button_w, button_h, kb):
	    """Continue immediately on first stylus contact inside the button."""
	    mouse.flush()
	    kb.flush()
	
	    touch_was_down = bool(mouse.get_pressed()[0])
	    last_touch_time = None
	    debounce_ms = 120
	
	    while True:
	        pressed_now = bool(mouse.get_pressed()[0])
	
	        if pressed_now and not touch_was_down:
	            pos = normalize_mouse_pos(mouse.get_pos())
	            touch_time = clock.time()
	
	            if last_touch_time is None or touch_time - last_touch_time >= debounce_ms:
	                last_touch_time = touch_time
	
	                if point_in_rect(pos, button_x, button_y, button_w, button_h):
	                    return
	
	        touch_was_down = pressed_now
	
	        key, key_time = kb.get_key(timeout=0)
	        if key == 'escape':
	            raise Exception('Aborted with ESC.')
	    
	
	def fit_button_text(button_text, button_w, button_h, start_font_size):
	    """Reduce button font size until the text fits into the button."""
	    usable_w = button_w - 2 * button_pad_x
	    usable_h = button_h - 2 * button_pad_y
	
	    fitted_size = start_font_size
	    tmp = Canvas()
	
	    while fitted_size >= 12:
	        _, text_h = tmp.text_size(
	            button_text,
	            center=True,
	            max_width=usable_w,
	            font_family='Arial',
	            font_size=fitted_size,
	            html=True
	        )
	
	        if text_h <= usable_h:
	            return fitted_size
	
	        fitted_size -= 1
	
	    return 12
	
	def draw_text_screen():
	    """
	    Draw left-aligned text and bottom-right next button.
	    Returns button geometry.
	    """
	    c = Canvas()
	    c.clear(color='white')
	
	    # --------------------------------------------------------
	    # Main text
	    # --------------------------------------------------------
	    main_text = clean_html(text_to_present)
	
	    text_x = -screen_w // 2 + margin
	    text_y = -screen_h // 2 + int(round(78 * screen_scale))
	    text_max_width = screen_w - 2 * margin
	
	    c.text(
	        main_text,
	        center=False,
	        x=ipos(text_x),
	        y=ipos(text_y),
	        max_width=text_max_width,
	        color='black',
	        font_family='Arial',
	        font_size=font_size,
	        html=True
	    )
	
	    # --------------------------------------------------------
	    # Bottom-right next button
	    # --------------------------------------------------------
	    button_text = clean_html(next_msg)
	
	    button_w = int(round(218 * screen_scale))
	    button_h = int(round(56 * screen_scale))
	
	    # Keep button within reasonable bounds
	    button_w = max(165, min(int(round(screen_w * 0.30)), button_w))
	    button_h = max(44, min(int(round(screen_h * 0.11)), button_h))
	
	    button_x = screen_w // 2 - margin - button_w
	    button_y = screen_h // 2 - margin - button_h
	
	    fitted_button_font_size = fit_button_text(
	        button_text,
	        button_w,
	        button_h,
	        button_font_size
	    )
	
	    # Draw button rectangle
	    c.rect(
	        ipos(button_x),
	        ipos(button_y),
	        ipos(button_w),
	        ipos(button_h),
	        fill=True,
	        color=button_fill_enabled,
	        penwidth=0
	    )
	
	    # Draw button border
	    c.rect(
	        ipos(button_x),
	        ipos(button_y),
	        ipos(button_w),
	        ipos(button_h),
	        fill=False,
	        color=button_border_enabled,
	        penwidth=max(1, int(round(2 * screen_scale)))
	    )
	
	    # Draw button text
	    c.text(
	        button_text,
	        center=True,
	        x=ipos(button_x + button_w / 2),
	        y=ipos(button_y + button_h / 2),
	        max_width=button_w - 2 * button_pad_x,
	        color=button_text_color,
	        font_family='Arial',
	        font_size=fitted_button_font_size,
	        html=False
	    )
	
	    c.show()
	
	    return button_x, button_y, button_w, button_h
	
	
	# ------------------------------------------------------------
	# Safety checks
	# ------------------------------------------------------------
	required_vars = [
	    'next_msg'
	]
	
	for var_name in required_vars:
	    if var_name not in vars():
	        raise RuntimeError('Required variable is missing: {}'.format(var_name))
	
	
	# ------------------------------------------------------------
	# Main presentation
	# ------------------------------------------------------------
	mouse = Mouse(visible=False)
	
	try:
	    mouse.show_cursor(False)
	except Exception:
	    pass
	
	mouse.flush()
	
	# Draw screen
	button_x, button_y, button_w, button_h = draw_text_screen()
	
	# Wait until participant touches/clicks the next button
	kb = Keyboard(keylist=['escape'], timeout=1)
	kb.flush()
	
	while True:
	    button, pos, click_time = mouse.get_click(timeout=1)
	
	    if button is not None and point_in_rect(pos, button_x, button_y, button_w, button_h):
	        break
	
	    key, key_time = kb.get_key(timeout=1)
	    if key == 'escape':
	        raise Exception('Aborted with ESC.')
	
	# Keep cursor hidden
	try:
	    mouse.show_cursor(False)
	except Exception:
	    pass
	
	print('present_text_screen done')
	__end__
	set _prepare ""

define inline_script present_testbl_instr
	set description "Executes Python code"
	___run__
	# ------------------------------------------------------------
	# present_text_screen
	# Shows one dynamic text variable left-aligned on the screen.
	#
	# If trial_mode == "execution":
	#   bottom-right next button with next_msg, continue by touch/click.
	#
	# Otherwise, e.g. imagery:
	#   bottom-centered advance box with adv_msg, continue by SPACE.
	#
	# The screen is shown for at least 1 second before responses are accepted.
	#
	# Compatible with OpenSesame 4.0.24, xpyriment backend
	# ------------------------------------------------------------
	
	
	# ------------------------------------------------------------
	# Select text variable to present
	# ------------------------------------------------------------
	# Change only this line for each new text screen.
	# Example: text_to_present = use_stylus_msg
	text_to_present = start_testbl_msg
	
	
	# ------------------------------------------------------------
	# Basic settings
	# ------------------------------------------------------------
	REF_HEIGHT = 768.0
	MIN_PRESENTATION_TIME = 1000  # ms
	
	screen_w = int(width)
	screen_h = int(height)
	screen_scale = float(screen_h) / REF_HEIGHT
	
	# Layout
	margin = int(round(48 * screen_scale))
	
	# Main instruction text
	font_size = int(round(24 * screen_scale))
	font_size = max(17, min(32, font_size))
	
	# Button text
	button_font_size = int(round(20 * screen_scale))
	button_font_size = max(14, min(26, button_font_size))
	
	button_pad_x = int(round(22 * screen_scale))
	button_pad_y = int(round(12 * screen_scale))
	
	# Uni Innsbruck style
	uibk_orange = '#f39200'
	button_fill_enabled = '#fff7ed'
	button_border_enabled = uibk_orange
	button_text_color = 'black'
	
	
	# ------------------------------------------------------------
	# Helper functions
	# ------------------------------------------------------------
	def clean_html(text):
	    """Keep HTML formatting, but remove unnecessary line breaks."""
	    return str(text).replace('\n', ' ').strip()
	
	
	def ipos(value):
	    """Return an integer pixel position."""
	    return int(round(value))
	
	
	def point_in_rect(pos, x, y, w, h):
	    """Check whether a click or touch position is inside a rectangle."""
	    if pos is None:
	        return False
	
	    px, py = pos
	    return (x <= px <= x + w) and (y <= py <= y + h)
	
	
	def get_button_layout(button_text, button_type):
	    """
	    Return button width, height and font size.
	    Wrapped dynamic text always remains inside the button.
	    """
	    tmp = Canvas()
	
	    if button_type == 'next':
	        # Bottom-right touch button for execution condition
	        button_w = int(round(300 * screen_scale))
	        button_w = max(190, min(int(round(screen_w * 0.45)), button_w))
	
	        min_button_h = max(44, int(round(56 * screen_scale)))
	        preferred_max_h = max(min_button_h, int(round(screen_h * 0.16)))
	
	    else:
	        # Bottom-centered SPACE button for imagery condition
	        button_w = int(round(520 * screen_scale))
	        button_w = max(300, min(int(round(screen_w * 0.72)), button_w))
	
	        min_button_h = max(58, int(round(72 * screen_scale)))
	        preferred_max_h = max(min_button_h, int(round(screen_h * 0.18)))
	
	    usable_w = button_w - 2 * button_pad_x
	    fitted_size = button_font_size
	
	    # Reduce font size only if wrapped text would make
	    # the button unusually high.
	    while fitted_size >= 12:
	        _, text_h = tmp.text_size(
	            button_text,
	            center=True,
	            max_width=usable_w,
	            font_family='Arial',
	            font_size=fitted_size,
	            html=True
	        )
	
	        needed_h = max(
	            min_button_h,
	            int(round(text_h + 2 * button_pad_y))
	        )
	
	        if needed_h <= preferred_max_h:
	            return button_w, needed_h, fitted_size
	
	        fitted_size -= 1
	
	    # Failsafe for very long localized text:
	    # keep font size 12 and enlarge the button enough.
	    _, text_h = tmp.text_size(
	        button_text,
	        center=True,
	        max_width=usable_w,
	        font_family='Arial',
	        font_size=12,
	        html=True
	    )
	
	    needed_h = max(
	        min_button_h,
	        int(round(text_h + 2 * button_pad_y))
	    )
	
	    return button_w, needed_h, 12
	
	
	def draw_text_screen():
	    """
	    Draw left-aligned instruction text and the correct advance button.
	    Return button geometry and screen onset time.
	    """
	    c = Canvas()
	    c.clear(color='white')
	
	    # --------------------------------------------------------
	    # Main text
	    # --------------------------------------------------------
	    main_text = clean_html(text_to_present)
	
	    text_x = -screen_w // 2 + margin
	    text_y = -screen_h // 2 + int(round(78 * screen_scale))
	    text_max_width = screen_w - 2 * margin
	
	    c.text(
	        main_text,
	        center=False,
	        x=ipos(text_x),
	        y=ipos(text_y),
	        max_width=text_max_width,
	        color='black',
	        font_family='Arial',
	        font_size=font_size,
	        html=True
	    )
	
	    # --------------------------------------------------------
	    # Advance button
	    # --------------------------------------------------------
	    if trial_mode == 'execution':
	        button_text = clean_html(next_msg)
	
	        button_w, button_h, fitted_button_font_size = get_button_layout(
	            button_text,
	            'next'
	        )
	
	        # Bottom-right position
	        button_x = screen_w // 2 - margin - button_w
	
	    else:
	        button_text = clean_html(adv_msg)
	
	        button_w, button_h, fitted_button_font_size = get_button_layout(
	            button_text,
	            'space'
	        )
	
	        # Bottom-centered position
	        button_x = -button_w // 2
	
	    button_y = screen_h // 2 - margin - button_h
	
	    # Draw button background
	    c.rect(
	        ipos(button_x),
	        ipos(button_y),
	        ipos(button_w),
	        ipos(button_h),
	        fill=True,
	        color=button_fill_enabled,
	        penwidth=0
	    )
	
	    # Draw button border
	    c.rect(
	        ipos(button_x),
	        ipos(button_y),
	        ipos(button_w),
	        ipos(button_h),
	        fill=False,
	        color=button_border_enabled,
	        penwidth=max(1, int(round(2 * screen_scale)))
	    )
	
	    # Draw automatically wrapped button text
	    c.text(
	        button_text,
	        center=True,
	        x=ipos(button_x + button_w / 2),
	        y=ipos(button_y + button_h / 2),
	        max_width=button_w - 2 * button_pad_x,
	        color=button_text_color,
	        font_family='Arial',
	        font_size=fitted_button_font_size,
	        html=True
	    )
	
	    onset_time = c.show()
	
	    return button_x, button_y, button_w, button_h, onset_time
	
	
	# ------------------------------------------------------------
	# Safety checks
	# ------------------------------------------------------------
	required_vars = [
	    'trial_mode'
	]
	
	if trial_mode == 'execution':
	    required_vars.append('next_msg')
	else:
	    required_vars.append('adv_msg')
	
	for var_name in required_vars:
	    if var_name not in vars():
	        raise RuntimeError('Required variable is missing: {}'.format(var_name))
	
	
	# ------------------------------------------------------------
	# Main presentation
	# ------------------------------------------------------------
	mouse = Mouse(visible=False)
	
	try:
	    mouse.show_cursor(False)
	except Exception:
	    pass
	
	# Draw screen and store button geometry and onset time.
	button_x, button_y, button_w, button_h, onset_time = draw_text_screen()
	
	
	# ------------------------------------------------------------
	# Response handling
	# ------------------------------------------------------------
	if trial_mode == 'execution':
	
	    # Continue only when the bottom-right button is touched or clicked.
	    # Responses are accepted only after the minimum presentation time.
	    mouse.flush()
	
	    kb = Keyboard(keylist=['escape'], timeout=1)
	    kb.flush()
	
	    while True:
	        button, pos, click_time = mouse.get_click(timeout=1)
	
	        key, key_time = kb.get_key(timeout=1)
	        if key == 'escape':
	            raise Exception('Aborted with ESC.')
	
	        if button is None:
	            continue
	
	        if click_time - onset_time < MIN_PRESENTATION_TIME:
	            continue
	
	        if point_in_rect(pos, button_x, button_y, button_w, button_h):
	            break
	
	else:
	
	    # Continue only when SPACE is pressed.
	    # SPACE is accepted only after the minimum presentation time.
	    keyboard = Keyboard(keylist=['space', 'escape'], timeout=1)
	    keyboard.flush()
	
	    while True:
	        key, key_time = keyboard.get_key(timeout=1)
	
	        if key == 'escape':
	            raise Exception('Aborted with ESC.')
	
	        if key == 'space' and key_time - onset_time >= MIN_PRESENTATION_TIME:
	            break
	
	
	# Keep cursor hidden.
	try:
	    mouse.show_cursor(False)
	except Exception:
	    pass
	
	print('present_testbl_instr done')
	__end__
	set _prepare ""

define inline_script set_practice_geom
	set description "Executes Python code"
	___run__
	apply_trial_geometry(float(current_trial_id), str(block_kind))
	print("practice geometry set for ID =", current_trial_id)
	__end__
	set _prepare ""

define inline_script set_test_geom
	set description "Executes Python code"
	___run__
	current_trial_id = float(test_trial_ids[int(trial_index)])
	block_kind = 'test'
	apply_trial_geometry(current_trial_id, block_kind)
	
	print("test geometry set for trial_index =", trial_index, "ID =", current_trial_id)
	__end__
	set _prepare ""

define form_multiple_choice sex
	set timeout infinite
	set spacing 10
	set question ""
	__options__
	{sex_f}
	{sex_m}
	{sex_d}
	__end__
	set margins "50;50;50;50"
	set form_var sex
	set form_title "{sex_item}"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define loop test_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 40
	set continuous no
	set break_if_on_first yes
	set break_if "[trial_index] >= [test_total_trials]"
	setcycle 0 trial_index 0
	setcycle 0 n_trial 1
	setcycle 1 trial_index 1
	setcycle 1 n_trial 2
	setcycle 2 trial_index 2
	setcycle 2 n_trial 3
	setcycle 3 trial_index 3
	setcycle 3 n_trial 4
	setcycle 4 trial_index 4
	setcycle 4 n_trial 5
	setcycle 5 trial_index 5
	setcycle 5 n_trial 6
	setcycle 6 trial_index 6
	setcycle 6 n_trial 7
	setcycle 7 trial_index 7
	setcycle 7 n_trial 8
	setcycle 8 trial_index 8
	setcycle 8 n_trial 9
	setcycle 9 trial_index 9
	setcycle 9 n_trial 10
	setcycle 10 trial_index 10
	setcycle 10 n_trial 11
	setcycle 11 trial_index 11
	setcycle 11 n_trial 12
	setcycle 12 trial_index 12
	setcycle 12 n_trial 13
	setcycle 13 trial_index 13
	setcycle 13 n_trial 14
	setcycle 14 trial_index 14
	setcycle 14 n_trial 15
	setcycle 15 trial_index 15
	setcycle 15 n_trial 16
	setcycle 16 trial_index 16
	setcycle 16 n_trial 17
	setcycle 17 trial_index 17
	setcycle 17 n_trial 18
	setcycle 18 trial_index 18
	setcycle 18 n_trial 19
	setcycle 19 trial_index 19
	setcycle 19 n_trial 20
	setcycle 20 trial_index 20
	setcycle 20 n_trial 21
	setcycle 21 trial_index 21
	setcycle 21 n_trial 22
	setcycle 22 trial_index 22
	setcycle 22 n_trial 23
	setcycle 23 trial_index 23
	setcycle 23 n_trial 24
	setcycle 24 trial_index 24
	setcycle 24 n_trial 25
	setcycle 25 trial_index 25
	setcycle 25 n_trial 26
	setcycle 26 trial_index 26
	setcycle 26 n_trial 27
	setcycle 27 trial_index 27
	setcycle 27 n_trial 28
	setcycle 28 trial_index 28
	setcycle 28 n_trial 29
	setcycle 29 trial_index 29
	setcycle 29 n_trial 30
	setcycle 30 trial_index 30
	setcycle 30 n_trial 31
	setcycle 31 trial_index 31
	setcycle 31 n_trial 32
	setcycle 32 trial_index 32
	setcycle 32 n_trial 33
	setcycle 33 trial_index 33
	setcycle 33 n_trial 34
	setcycle 34 trial_index 34
	setcycle 34 n_trial 35
	setcycle 35 trial_index 35
	setcycle 35 n_trial 36
	setcycle 36 trial_index 36
	setcycle 36 n_trial 37
	setcycle 37 trial_index 37
	setcycle 37 n_trial 38
	setcycle 38 trial_index 38
	setcycle 38 n_trial 39
	setcycle 39 trial_index 39
	setcycle 39 n_trial 40
	run test_trial_sequence

define sequence test_trial_logger
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run logger True

define sequence test_trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run set_test_geom "[trial_index] < [test_n_trials]"
	run trial_inline_script True
	run test_trial_logger True

define inline_script trial_inline_script
	set description "Executes Python code"
	___run__
	# ------------------------------------------------------------
	# settings
	# ------------------------------------------------------------
	try:
	    countdown_seconds = int(countdown_seconds)
	except Exception:
	    countdown_seconds = 3
	
	try:
	    show_cursor = bool(int(show_cursor))
	except Exception:
	    show_cursor = False
	
	try:
	    bg_col = background
	except Exception:
	    bg_col = 'black'
	
	try:
	    fg_col = foreground
	except Exception:
	    fg_col = 'white'
	
	red_col = '#c0504d'
	target_col = '#7f7f7f'
	start_col = '#f79646'
	
	countdown_target_col = '#bfbfbf'
	countdown_center_col = '#e6b8b7'
	text_col = fg_col
	
	# ------------------------------------------------------------
	# devices
	# ------------------------------------------------------------
	kb = Keyboard(keylist=['space', 'escape'], timeout=None)
	ms = Mouse(buttonlist=[1], timeout=None, visible=show_cursor)
	
	# ------------------------------------------------------------
	# trial geometry
	# ------------------------------------------------------------
	center_target = {
	    'label': 'center',
	    'x': int(midx_red),
	    'y': int(midy_red),
	    'r': int(px_red)
	}
	
	radial_targets = [
	    {'label': 'target_1', 'x': int(target_1_x), 'y': int(target_1_y), 'r': int(px_target)},
	    {'label': 'target_2', 'x': int(target_2_x), 'y': int(target_2_y), 'r': int(px_target)},
	    {'label': 'target_3', 'x': int(target_3_x), 'y': int(target_3_y), 'r': int(px_target)},
	    {'label': 'target_4', 'x': int(target_4_x), 'y': int(target_4_y), 'r': int(px_target)},
	    {'label': 'target_5', 'x': int(target_5_x), 'y': int(target_5_y), 'r': int(px_target)}
	]
	
	movement_sequence = [
	    center_target,
	    radial_targets[0],
	    center_target,
	    radial_targets[1],
	    center_target,
	    radial_targets[2],
	    center_target,
	    radial_targets[3],
	    center_target,
	    radial_targets[4],
	    center_target
	]
	
	# ------------------------------------------------------------
	# helper functions
	# ------------------------------------------------------------
	def inside_circle(x, y, cx, cy, r):
	    return ((x - cx) ** 2 + (y - cy) ** 2) <= (r ** 2)
	
	def build_start_canvas():
	    c = Canvas()
	    c.color = fg_col
	    c.background_color = bg_col
	
	    c.circle(
	        center_target['x'],
	        center_target['y'],
	        center_target['r'],
	        color=start_col,
	        fill=True
	    )
	
	    c.text(
	        trial_counter_text,
	        x=0,
	        y=int(-height * 0.45),
	        color=text_col,
	        font_size=20,
	        center=True
	    )
	
	    c.text(
	        str(start_trial_msg),
	        x=center_target['x'],
	        y=int(center_target['y'] - center_target['r'] - 80),
	        color=text_col,
	        font_size=24,
	        center=True
	    )
	
	    return c
	
	def build_countdown_canvas(sec):
	    c = Canvas()
	    c.color = fg_col
	    c.background_color = bg_col
	
	    for t in radial_targets:
	        c.circle(t['x'], t['y'], t['r'], color=countdown_target_col, fill=True)
	
	    c.circle(
	        center_target['x'],
	        center_target['y'],
	        center_target['r'],
	        color=countdown_center_col,
	        fill=True
	    )
	
	    c.text(str(sec), x=0, y=0, color=text_col, font_size=36, center=True)
	
	    return c
	
	def build_trial_canvas():
	    c = Canvas()
	    c.color = fg_col
	    c.background_color = bg_col
	
	    for t in radial_targets:
	        c.circle(t['x'], t['y'], t['r'], color=target_col, fill=True)
	
	    c.circle(
	        center_target['x'],
	        center_target['y'],
	        center_target['r'],
	        color=red_col,
	        fill=True
	    )
	
	    return c
	
	def wait_for_start():
	    kb.flush()
	    ms.flush()
	
	    while True:
	        if str(trial_mode).lower() == 'imagery':
	            key, ts = kb.get_key(timeout=1)
	
	            if key == 'escape':
	                return False, -1
	
	            if key == 'space':
	                return True, ts
	
	        elif str(trial_mode).lower() == 'execution':
	            button, pos, ts = ms.get_click(timeout=1)
	
	            if button == 1:
	                x, y = pos
	
	                if inside_circle(
	                    x,
	                    y,
	                    center_target['x'],
	                    center_target['y'],
	                    center_target['r']
	                ):
	                    return True, ts
	
	            key, ts = kb.get_key(timeout=1)
	
	            if key == 'escape':
	                return False, -1
	
	        else:
	            raise Exception('Unknown trial_mode: %s' % trial_mode)
	
	def collect_spaces(n_spaces=11):
	    """
	    Collect the 11 space presses that define the movement times.
	    Screen touch is stored only as a binary trial-level variable.
	    Touch checking never waits for input.
	    """
	    global screen_touched
	
	    events = []
	
	    while len(events) < n_spaces:
	
	        # Space presses are the only basis for MT calculation.
	        key, ts = kb.get_key(timeout=1)
	
	        if key == 'escape':
	            return events, True
	
	        if key == 'space':
	            idx = len(events)
	            events.append({
	                'label': movement_sequence[idx]['label'],
	                'time': ts
	            })
	
	        # Only check until one touch during the active sequence was detected.
	        # timeout=0 means that this call does not wait for a touch.
	        if screen_touched == 0:
	            button, pos, touch_ts = ms.get_click(timeout=0)
	
	            if button == 1:
	                screen_touched = 1
	
	    return events, False
	
	def safe_diff(t2, t1):
	    if t1 < 0 or t2 < 0:
	        return -1
	
	    return t2 - t1
	
	# ------------------------------------------------------------
	# reset trial variables
	# ------------------------------------------------------------
	trial_valid = 0
	trial_timeout = 0
	trial_aborted = 0
	trial_error_count = 0
	response = ''
	
	sequence_onset = -1
	sequence_offset = -1
	sequence_duration = -1
	
	mt_1 = -1
	mt_2 = -1
	mt_3 = -1
	mt_4 = -1
	mt_5 = -1
	
	start_trigger_time = -1
	start_trigger_valid = 0
	
	screen_touched = 0
	touch_events_n = 0
	space_events_n = 0
	
	for i in range(1, 12):
	    globals()['event_%d_label' % i] = ''
	    globals()['event_%d_space_time' % i] = -1
	
	# ------------------------------------------------------------
	# trial counter
	# ------------------------------------------------------------
	if str(current_block_kind).lower() == 'practice':
	    practice_counter += 1
	    current_trial_nr = int(practice_counter)
	    total_trial_nr = int(practice_total_trials)
	else:
	    test_counter += 1
	    current_trial_nr = int(test_counter)
	    total_trial_nr = int(test_total_trials)
	
	trial_counter_text = "%d/%d" % (current_trial_nr, total_trial_nr)
	
	# ------------------------------------------------------------
	# start mode
	# ------------------------------------------------------------
	if str(trial_mode).lower() == 'execution':
	    start_trigger_mode = 'touch'
	elif str(trial_mode).lower() == 'imagery':
	    start_trigger_mode = 'space'
	else:
	    raise Exception('Unknown trial_mode: %s' % trial_mode)
	
	# ------------------------------------------------------------
	# start screen
	# ------------------------------------------------------------
	build_start_canvas().show()
	
	start_ok, start_time = wait_for_start()
	
	if not start_ok:
	    trial_aborted = 1
	    response = 'escape'
	    raise Exception('Aborted with ESC.')
	
	start_trigger_valid = 1
	start_trigger_time = start_time
	
	# ------------------------------------------------------------
	# countdown
	# ------------------------------------------------------------
	for sec in range(countdown_seconds, 0, -1):
	    build_countdown_canvas(sec).show()
	    clock.sleep(1000)
	
	# ------------------------------------------------------------
	# trial sequence
	# ------------------------------------------------------------
	
	# Remove keyboard and touch events from the countdown.
	# The active sequence begins only after this reset.
	kb.flush()
	ms.flush()
	
	sequence_onset = build_trial_canvas().show()
	
	event_results, aborted = collect_spaces(n_spaces=11)
	
	if aborted:
	    trial_aborted = 1
	    response = 'escape'
	    raise Exception('Aborted with ESC.')
	
	space_events_n = len(event_results)
	
	# Retain the existing variable for logger compatibility.
	# It now has the same binary meaning as screen_touched.
	touch_events_n = int(screen_touched)
	
	# ------------------------------------------------------------
	# save space events
	# ------------------------------------------------------------
	for idx, event in enumerate(event_results, start=1):
	    globals()['event_%d_label' % idx] = event['label']
	    globals()['event_%d_space_time' % idx] = event['time']
	
	# ------------------------------------------------------------
	# compute MTs from space only
	# ------------------------------------------------------------
	mt_1 = safe_diff(event_2_space_time, event_1_space_time)
	mt_2 = safe_diff(event_4_space_time, event_3_space_time)
	mt_3 = safe_diff(event_6_space_time, event_5_space_time)
	mt_4 = safe_diff(event_8_space_time, event_7_space_time)
	mt_5 = safe_diff(event_10_space_time, event_9_space_time)
	
	sequence_offset = clock.time()
	sequence_duration = sequence_offset - sequence_onset
	
	trial_valid = 1
	response = 'valid'
	
	# ------------------------------------------------------------
	# blank screen
	# ------------------------------------------------------------
	blank_canvas = Canvas()
	blank_canvas.background_color = bg_col
	blank_canvas.show()
	clock.sleep(1000)
	
	kb.flush()
	ms.flush()
	
	# ------------------------------------------------------------
	# debug output
	# ------------------------------------------------------------
	print("trial done")
	print("trial_mode =", trial_mode)
	print("current_condition =", current_condition)
	print("current_id_num =", current_id_num)
	print("trial_counter_text =", trial_counter_text)
	print("start_trigger_mode =", start_trigger_mode)
	print("start_trigger_time =", start_trigger_time)
	print("space_events_n =", space_events_n)
	print("screen_touched =", screen_touched)
	print("touch_events_n =", touch_events_n)
	print("mt_1..mt_5 =", mt_1, mt_2, mt_3, mt_4, mt_5)
	__end__
	set _prepare ""

