PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '00', 'session': '001', 'language': '["English", "French", "Spanish", "German"]'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [2560, 1440]
  color = 1.0000, 1.0000, 1.0000
  expName = CRFT
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    CodeComponent trial_code
      Code Type = Py
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      Begin Experiment:
        cursor_size = 0.000
        # Initialize colors
        cursor_color = 'black'
        target_1_color = target_2_color = target_3_color = target_4_color = target_5_color = 'grey'
      Begin Routine:
        mouse.setVisible(False)
        # set position of mouse to center, use it carefully as it might change the x-y coordinate system
        mouse.setPos([0, 0])

        if feedback == True:
            cursor_size = 0.001
        else:
            cursor_size = 0

        # Expected sequence of taps
        tap_sequence = [start, target_1, start, target_2, start, target_3, start, target_4, start, target_5, start]
        tap_sequence_names = ['start', 'target_1', 'start', 'target_2', 'start', 'target_3', 'start', 'target_4', 'start', 'target_5', 'start']
        tap_sequence_index = 0
        valid_targets = [start, target_1, target_2, target_3, target_4, target_5]

        # Initialize colors
        cursor_color = 'black'
        target_1_color = target_2_color = target_3_color = target_4_color = target_5_color = 'grey'

        # Time settings
        color_reset_time = None
        color_flash_time = 0.2

        # Tap settings
        last_pos = mouse.getPos()
        last_time = core.getTime()
        tap_positions = []
        tap_times = []
        tapped_names = []
        routine_clock = core.Clock()

        # Space settings
        previous_key_count = 0
        current_key_count = 0
        space_resp.keys = []
        key_count = 0
      Each Frame:
        # Get current mouse position
        cursor_x, cursor_y = mouse.getPos()
        new_pos = mouse.getPos()

        # Detect a "tap" when the mouse moves and enough time has passed
        if tuple(new_pos) != tuple(last_pos) and core.getTime() - last_time > 0.1:
            valid_tap = False
            tapped_name = None  # default: no valid target was tapped
            # Check if the tap was on a valid target
            for target in valid_targets:
                if target.contains(new_pos):
                    valid_tap = True
                    tapped_name = target.name  # store name of the target
                    break
            # Store tap data
            tap_positions.append(new_pos)                # tap position
            tap_times.append(routine_clock.getTime())             # tap time from start of routine
            tapped_names.append(tapped_name)             # target name (or None)
            # Change cursor color based on tap validity
            if valid_tap:
                cursor_color = 'green'
            else:
                cursor_color = 'red'
            # Set time to reset cursor color
            color_reset_time = t + color_flash_time
            last_time = core.getTime()

        # Update last position of the mouse
        last_pos = new_pos

        # Reset cursor color after flash duration
        if color_reset_time is not None and t >= color_reset_time:
            cursor_color = 'black'
            color_reset_time = None

        # At the beginning, no key has been pressed
        # We initialize the list of key presses
        if space_resp.keys is None:
            space_resp.keys = []

        # set variable to count the number of keys
        current_key_count = len(space_resp.keys) # use the native variable from component

        # Check if a key has been pressed
        if current_key_count > previous_key_count:
            key_count += 1
        else:
            key_count = key_count

        # Update the previous key count for the next frame
        previous_key_count = current_key_count

        # End trial when reaching expected number of keys
        if key_count >= key_presses:
            continueRoutine = False
        else:
            continueRoutine = True
      End Routine:
        trial_n += 1

        # Define the expected sequence of target centers
        target_centers = [start.pos, target_1.pos,
                          start.pos, target_2.pos,
                          start.pos, target_3.pos,
                          start.pos, target_4.pos,
                          start.pos, target_5.pos,
                          start.pos]

        # Error distances for each tap
        error_distances = []

        for idx in range(len(tap_positions)):
            tap_pos = np.array(tap_positions[idx])

            # Determine the expected target for this tap
            if idx < len(target_centers):
                target_center = np.array(target_centers[idx])
            else:
                target_center = np.array([start.pos[0], start.pos[1]])  # fallback

            # If the tap was on a valid target, error is 0
            if tapped_names[idx] is not None:
                error = 0
            else:
                # Compute Euclidean distance to expected target center
                error = np.linalg.norm(tap_pos - target_center)

            error_distances.append(error)

        errors_np = np.array(error_distances, dtype=float)
        # number of errors
        n_errors = int(np.sum(errors_np > 0.0))
        # number of correct taps
        n_correct = key_presses - n_errors  # 11 - errors

        # Mean error
        if n_errors > 0:
            mean_error = round(float(np.mean(errors_np[errors_np > 0.0]))*100, 2)
        else:
            mean_error = np.nan

        # Save the entire list as a string in the experiment data
        thisExp.addData('error_distances', str(error_distances))

        # Compute times
        # 1) Convert lists to NumPy arrays
        tap_times = np.array(tap_times, dtype=float)
        space_times = np.array(space_resp.rt, dtype=float)

        # 2) Determine how many pairs we can compare
        n_pairs = min(len(tap_times), len(space_times))

        # 3) Compute pairwise differences: (tap_time - space_time)
        time_diffs = []
        for i in range(n_pairs):
            try:
                diff = tap_times[i] - space_times[i]
            except Exception:
                diff = np.nan
            time_diffs.append(diff)

        # 4) Compute average difference (mean of all pairwise diffs, ignoring NaNs)
        if len(time_diffs) > 0:
            mean_diff = float(np.nanmean(time_diffs)) * 1000
        else:
            mean_diff = np.nan

        # 5) Count how many taps and space presses we recorded
        n_taps = len(tap_times)
        n_spaces = len(space_times)

        # 6) Compute total duration: last minus first
        if len(tap_times) >= 2:
            tap_duration = float(tap_times[-1] - tap_times[0])
        else:
            tap_duration = np.nan

        if len(space_times) >= 2:
            # total duration
            space_duration = float(space_times[-1] - space_times[0])
            # calculate duration for every "reach" to target (not get back)
            move_durations = []
            for i in range(0, len(space_times) - 1, 2):  # jumps of 2
                start_mov = space_times[i]
                end_mov = space_times[i + 1]
                duration = float(end_mov - start_mov)
                move_durations.append(duration)
        else:
            space_duration = np.nan
            move_durations = [np.nan, np.nan, np.nan, np.nan, np.nan]
        # add them to the big lists
        movement_times.extend(move_durations)
        index_difficulties.extend(ID)

        # 7) round values to display nicely if needed
        mean_diff = round(mean_diff, 0)
        tap_duration = round(tap_duration, 3)
        space_duration = round(space_duration, 3)

        # Vectors that may be used for processing
        space_durations.append(space_duration)
        target_diameters.append(target_diameter)


        # Save to output
        thisExp.addData('tap_duration', tap_duration)
        thisExp.addData('space_duration', space_duration)
        thisExp.addData('move_durations', move_durations)
        thisExp.addData('mean_tap_space_diff', mean_diff)
        thisExp.addData('n_taps', n_taps)
        thisExp.addData('n_spaces', n_spaces)
    PolygonComponent start
      fillColor = 1.0000, -0.4588, -1.0000
      lineColor = 1.0000, -0.2235, -0.4431
      pos [set every repeat] = (start_x, start_y)
      shape = circle
      size [set every repeat] = (start_diameter, start_diameter)
      startVal [time (s)] = 0.0
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    PolygonComponent target_1
      fillColor [set every frame] = $target_1_color
      lineColor [set every frame] = $target_1_color
      pos [set every repeat] = target_5_pos
      shape = circle
      size [set every repeat] = target_1_size
      startVal [time (s)] = 0.0
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    PolygonComponent target_2
      fillColor [set every frame] = $target_2_color
      lineColor [set every frame] = $target_2_color
      pos [set every repeat] = target_4_pos
      shape = circle
      size [set every repeat] = target_2_size
      startVal [time (s)] = 0.0
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    PolygonComponent target_3
      fillColor [set every frame] = $target_3_color
      lineColor [set every frame] = $target_3_color
      pos [set every repeat] = target_3_pos
      shape = circle
      size [set every repeat] = target_3_size
      startVal [time (s)] = 0.0
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    PolygonComponent target_4
      fillColor [set every frame] = $target_4_color
      lineColor [set every frame] = $target_4_color
      pos [set every repeat] = target_2_pos
      shape = circle
      size [set every repeat] = target_4_size
      startVal [time (s)] = 0.0
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    PolygonComponent target_5
      fillColor [set every frame] = $target_5_color
      lineColor [set every frame] = $target_5_color
      pos [set every repeat] = target_1_pos
      shape = circle
      size [set every repeat] = target_5_size
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = start, target_1, target_2, target_3, target_4, target_5
      correctAns = start, target_1, target_2, target_3, target_4, target_5
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0
      storeCorrect = True
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    PolygonComponent cursor
      fillColor [set every frame] = $cursor_color
      lineColor [set every frame] = $cursor_color
      pos [set every frame] = (cursor_x, cursor_y)
      shape = star7
      size [set every repeat] = (cursor_size, cursor_size)
      startVal [time (s)] = 0
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    KeyboardComponent space_resp
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0
      store = all keys
      syncScreenRefresh = False
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    KeyboardComponent key_resp
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine language_settings
    RoutineSettingsComponent language_settings
      saveStartStop = False
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    CodeComponent language_localiser_code
      Code Type = Py
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      Begin Experiment:
        import pandas as pd
        # make sure lang_code is defined and set to EN as default
        lang_code = "EN"
        # read excel file with message according to language codes
        messages_df = pd.read_excel('messages.xlsx')
        # create a global dictionary
        MESSAGES = {}
        # assign each value of language to the corresponding key (language code)
        for idx, row in messages_df.iterrows():
            key = row['message']
            MESSAGES[key] = {}
            for col in row.index:
                if col != 'message':
                    MESSAGES[key][col] = row[col]
        # create global variables with the list of messages to be usable throuhgout the experiment
        for key in MESSAGES:
            globals()[key] = MESSAGES[key].get(lang_code, MESSAGES[key]['EN'])  # fallback to English if language is not localised
      Begin Routine:
        if language == expInfo['language']:
            lang_code = ISO_code
            thisExp.addData("language_code", lang_code)
            # update global variables with new language
            for key in MESSAGES:
                globals()[key] = MESSAGES[key].get(lang_code, MESSAGES[key]['EN'])
  Routine instructions
    RoutineSettingsComponent instructions
      saveStartStop = False
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    CodeComponent inst_code
      Code Type = Auto->JS
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      Begin Experiment:
        adv_time = 0.5
      Begin Routine:
        win.mouseVisible = True
        try:
            inst_msg = eval(f"inst_msg_{lang_code}")
        except NameError:
            inst_msg = inst_msg_EN

        import numpy as np
        if video == "yes":
            video_start = 2
            adv_time = 14

        else:
            adv_time = 0.5
            video_start = 1000
    TextComponent inst_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.0275
      pos [set every repeat] = (text_x, text_y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $inst_msg
      wrapWidth = 0.9
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    KeyboardComponent inst_adv_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = $adv_time
      store = nothing
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    ImageComponent inst_image
      image [set every repeat] = $inst_pics
      pos [set every repeat] = (image_x, image_y)
      saveStartStop = False
      size [set every repeat] = (image_w, image_h)
      startVal [time (s)] = 0.0
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    TextComponent inst_adv_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = $adv_time
      text [set every repeat] = $adv_msg
      wrapWidth = 1.3
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    MovieComponent animation_video
      No audio = True
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = $video_file
      size = (0.8, 0.6)
      startVal [time (s)] = $video_start
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  Routine bye
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    CodeComponent bye_code
      Code Type = Auto->JS
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      Begin Experiment:
        regression_plot = ""
      Begin Routine:
        regression_plot = f"plots/regression_plot_{expInfo['participant']}.png"
    TextComponent bye_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $bye_msg
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    ImageComponent regression_image
      image [set every repeat] = $regression_plot
      pos = (0, -0.1)
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
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    KeyboardComponent by_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine welcome
    RoutineSettingsComponent welcome
      saveStartStop = False
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    TextComponent order_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.02
      pos = (0.8, 0.45)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $'Order: ' + str(order)
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    TextComponent task_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $welcome_msg
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    TextComponent stylus_text
      color [set every repeat] = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $stylus_msg
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    TextComponent adv_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.045
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $adv_msg
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    KeyboardComponent welcome_adv_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.1
      store = nothing
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  Routine exp_settings
    RoutineSettingsComponent exp_settings
      saveStartStop = False
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    CodeComponent experiment_settings_code
      Code Type = Py
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      Begin Experiment:
        n_blocks = 4
        current_block = 0
        trial_n = 0
        n_targets = 5  # number of targets on screen
        n_IDs = 5  # 5 levels of Index of Difficulty
        practice_reps = 1 # 1 round of slightly different IDs
        reps_per_block = 1  # start at 1, this updates later depending on block type
        main_blocks_reps = 4  # change to 4 for the actual task!!
        show_inst = 1
        trials_block = 0
        key_presses = 5*2 + 1 # 11!
        inst_file = ""
        practice_taps = 30
      Begin Routine:
        # add group to output and variable to use for order
        expInfo['order'] = counterbalance.group
        order = expInfo['order']
    CodeComponent vars_to_process
      Code Type = Auto->JS
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      Begin Experiment:
        space_durations = []
        target_diameters = []
        index_difficulties = []
        movement_times = []
  Routine start_block
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    CodeComponent start_block_code
      Code Type = Auto->JS
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      Begin Routine:
        current_block += 1
        trial_n = 0
        video_start = 1000

        if current_block in [1,3]:
            feedback = True
            reps_per_block = practice_reps
            show_inst = 999
            block_msg = practice_block_msg
        else:
            feedback = False
            reps_per_block = main_blocks_reps
            show_inst = 0
            block_msg = task_block_msg

        trials_block = n_IDs * reps_per_block

        if current_block < 3:
            if order == '0':
                inst_file = 'instructions_execution.xlsx'
                video_file = 'images/execution_animation.mp4'
            elif order == '1':
                inst_file = 'instructions_imagery.xlsx'
                video_file = 'images/imagery_animation.mp4'
        elif current_block > 2:
            if order == '0':
                inst_file = 'instructions_imagery.xlsx'
                video_file = 'images/imagery_animation.mp4'
            elif order == '1':
                inst_file = 'instructions_execution.xlsx'
                video_file = 'images/execution_animation.mp4'
    TextComponent block_n_text
      color = -1.0000, 0.4980, 1.0000
      letterHeight = 0.045
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_n_msg + ' ' + str(current_block) + ' ' + out_of_msg + ' ' + str(n_blocks)
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    TextComponent start_block_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_msg
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    TextComponent start_block_adv_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.045
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text [set every repeat] = $adv_msg
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    KeyboardComponent start_block_adv_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.1
      store = nothing
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  Routine test_screen
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    CodeComponent test_screen_code
      Code Type = Py
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      Begin Experiment:
        import numpy as np
        n = 30
        # last value is number
        circle_sizes = np.linspace(0.02, 0.2, n)
        circle_xs = np.linspace(-0.4, 0.4, n)
        circle_ys = np.linspace(-0.3, 0.3, n)
        circle_size = 0
        circle_x = 0
        circle_y = 0
        circle_color = 'grey'
        correct_taps = 0
        this_tap = 0
      Begin Routine:
        # choose randomly size and position
        circle_size = np.random.choice(circle_sizes)
        circle_x = np.random.choice(circle_xs)
        circle_y = np.random.choice(circle_ys)

        #mouse.setPos([-0.5, -0.5])
        last_pos = mouse_test.getPos()
        last_time = core.getTime()
        this_tap = 0
        tap_detected = False

        if test_loop.thisN == 0:
            circle_color = [0.0902, -1.0000, -1.0000]
        else:
            circle_color = 'grey'
      Each Frame:
        # Get current mouse position
        new_pos = mouse_test.getPos()

        # Detect a "tap" when the mouse moves and enough time has passed
        if not tap_detected and not np.array_equal(new_pos, last_pos):
            tap_detected = True
            if circle_test.contains(new_pos):
                this_tap = 1
            else:
                this_tap = 0
            continueRoutine = False

        last_pos = new_pos
      End Routine:
        correct_taps = correct_taps + this_tap
    TextComponent test_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      text [set every repeat] = $test_msg
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    PolygonComponent circle_test
      fillColor [set every repeat] = $circle_color
      lineColor [set every repeat] = $circle_color
      pos [set every repeat] = (circle_x, circle_y)
      shape = circle
      size [set every repeat] = (circle_size, circle_size)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_test
      clickable = $circle_test
      correctAns = circle_test
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0
      storeCorrect = True
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  Routine fb
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    CodeComponent feedback_code
      Code Type = Py
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      Begin Experiment:
        fb_time_x = 0
        fb_time_y = 0
        fb_taps_x = 0
        fb_taps_y = 0
      Begin Routine:
        # Only provide feedback if we're in the practice block
        if feedback == True and inst_file == "instructions_execution.xlsx":
            # show both feedback based on time and tap accuracy
            fb_time_x = 0
            fb_time_y = 0
            fb_taps_x = 0
            fb_taps_y = -0.2
        elif feedback == True and inst_file == "instructions_imagery.xlsx":
            # only show feedback on time
            fb_time_x = 0
            fb_time_y = 0
            fb_taps_x = -2 # set to very large value which is out of screen
            fb_taps_y = -2
        elif feedback == False:
            # not show any feedback
            fb_time_x = -2
            fb_time_y = -2
            fb_taps_x = -2
            fb_taps_y = -2
    TextboxComponent trial_text
      bold = False
      color = -1.0000, 0.4980, 1.0000
      editable = False
      letterHeight = 0.07
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $trial_msg + ' ' + str(trial_n) + ' ' + out_of_msg + ' ' + str(trials_block)
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    TextboxComponent fb_text_time
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.04
      pos [set every repeat] = (fb_time_x, fb_time_y)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $time_msg + '\n\n' + str(round(space_duration, 2)) + ' ' + second_msg
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    TextboxComponent fb_text_detail
      alignment = center-left
      bold = False
      color = -1.0000, -1.0000, -1.0000
      disabled = True
      editable = False
      letterHeight = 0.04
      pos [set every repeat] = (0, fb_pos)
      size = (0.7, 1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Number of taps: ' + str(n_taps) + '\nNumber of spaces: ' + str(n_spaces) + '\nNumber of errors: ' + str(n_errors) + '\nAverage error distance (% screen): ' + str(mean_error) + '\n\nAverage tap-space time (ms): ' + str(mean_diff) + '\n\nTrial duration (s):\nTaps: ' + str(tap_duration) + '\nSpaces: ' + str(space_duration)
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    TextComponent fb_adv_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.045
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text [set every repeat] = $adv_msg
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    KeyboardComponent adv_fb_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine blank
    RoutineSettingsComponent blank
      stopVal [duration (s)] = 1
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  Routine fb_test
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    TextboxComponent test_screen_fb_text
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.04
      size = (1, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $correct_taps_msg + '\n\n' + str(correct_taps) + ' ' + out_of_msg + ' ' + str(practice_taps)
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    TextComponent fb_test_adv_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 2
      text [set every repeat] = $adv_msg
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    KeyboardComponent fb_test_adv_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
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  Routine comp_check
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    CodeComponent comp_check_code
      Code Type = Auto->JS
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      Begin Experiment:
        y_locs = [0.3, 0.2, 0.1, 0, -0.1, -0.2]
      Begin Routine:
        win.mouseVisible = True
        buttonA.wasClicked = False
        buttonB.wasClicked = False
        buttonC.wasClicked = False
        buttonD.wasClicked = False
        buttonE.wasClicked = False
        buttonF.wasClicked = False
        tickA = tickB = tickC = tickD = tickE = tickF = False
        tick_colorA = tick_colorB = tick_colorC = "black"
        tick_colorD = tick_colorE = tick_colorF = "black"
        y_locs = [0.25, 0.15, 0.05, -0.05, -0.15, -0.25]
        if inst_file == "instructions_execution.xlsx":
            optionA_msg = optionA_exe_msg
            optionB_msg = optionB_exe_msg
            optionC_msg = optionC_exe_msg
            optionD_msg = optionD_exe_msg
            optionE_msg = optionE_exe_msg
            optionF_msg = optionF_exe_msg
        else:
            optionA_msg = optionA_ima_msg
            optionB_msg = optionB_ima_msg
            optionC_msg = optionC_ima_msg
            optionD_msg = optionD_ima_msg
            optionE_msg = optionE_ima_msg
            optionF_msg = optionF_ima_msg
      Each Frame:
        if buttonA.isClicked:
            if not buttonA.wasClicked:
                tickA = not tickA
                tick_colorA = "white" if tickA else "black"
            buttonA.wasClicked = True
        else:
            buttonA.wasClicked = False

        if buttonB.isClicked:
            if not buttonB.wasClicked:
                tickB = not tickB
                tick_colorB = "white" if tickB else "black"
            buttonB.wasClicked = True
        else:
            buttonB.wasClicked = False

        if buttonC.isClicked:
            if not buttonC.wasClicked:
                tickC = not tickC
                tick_colorC = "white" if tickC else "black"
            buttonC.wasClicked = True
        else:
            buttonC.wasClicked = False

        if buttonD.isClicked:
            if not buttonD.wasClicked:
                tickD = not tickD
                tick_colorD = "white" if tickD else "black"
            buttonD.wasClicked = True
        else:
            buttonD.wasClicked = False

        if buttonE.isClicked:
            if not buttonE.wasClicked:
                tickE = not tickE
                tick_colorE = "white" if tickE else "black"
            buttonE.wasClicked = True
        else:
            buttonE.wasClicked = False

        if buttonF.isClicked:
            if not buttonF.wasClicked:
                tickF = not tickF
                tick_colorF = "white" if tickF else "black"
            buttonF.wasClicked = True
        else:
            buttonF.wasClicked = False
      End Routine:
        if inst_file == "instructions_execution.xlsx":
            if tickC and tickF and not (tickA or tickB or tickD or tickE):
                response_correct = True
            else:
                response_correct = False
        else:
            if tickA and tickB and tickE and tickF and not (tickC or tickD):
                response_correct = True
            else:
                response_correct = False
    TextComponent comp_check_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $comp_check_msg
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    ButtonComponent buttonA
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 0.5
      color = -1.0000, -1.0000, -1.0000
      fillColor [set every frame] = $tick_colorA
      forceEndRoutine = False
      letterHeight = 0.03
      pos [set every repeat] = (-0.5, y_locs[0])
      size = (0.05, 0.05)
      startVal [time (s)] = 0
      text = x
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      callback:
        tickA = True
        tick_colorA = "white"
    TextboxComponent textboxA
      alignment = center-left
      anchor = center-left
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.025
      pos [set every repeat] = (-0.45, y_locs[0])
      size = (1, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $optionA_msg
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    ButtonComponent buttonB
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 0.5
      color = -1.0000, -1.0000, -1.0000
      fillColor [set every frame] = $tick_colorB
      forceEndRoutine = False
      letterHeight = 0.03
      pos [set every repeat] = (-0.5, y_locs[1])
      size = (0.05, 0.05)
      startVal [time (s)] = 0
      text = x
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      callback:
        tickB = True
        tick_colorB = "white"
    TextboxComponent textboxB
      alignment = center-left
      anchor = center-left
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.025
      pos [set every repeat] = (-0.45, y_locs[1])
      size = (1, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $optionB_msg
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    ButtonComponent buttonC
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 0.5
      color = -1.0000, -1.0000, -1.0000
      fillColor [set every frame] = $tick_colorC
      forceEndRoutine = False
      letterHeight = 0.03
      pos [set every repeat] = (-0.5, y_locs[2])
      size = (0.05, 0.05)
      startVal [time (s)] = 0
      text = x
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      callback:
        tickC = True
        tick_colorC = "white"
    TextboxComponent textboxC
      alignment = center-left
      anchor = center-left
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.025
      pos [set every repeat] = (-0.45, y_locs[2])
      size = (1, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $optionC_msg
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    ButtonComponent buttonD
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 0.5
      color = -1.0000, -1.0000, -1.0000
      fillColor [set every frame] = $tick_colorD
      forceEndRoutine = False
      letterHeight = 0.03
      pos [set every repeat] = (-0.5, y_locs[3])
      size = (0.05, 0.05)
      startVal [time (s)] = 0
      text = x
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      callback:
        tickD = True
        tick_colorD = "white"
    TextboxComponent textboxD
      alignment = center-left
      anchor = center-left
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.025
      pos [set every repeat] = (-0.45, y_locs[3])
      size = (1, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $optionD_msg
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    ButtonComponent buttonE
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 0.5
      color = -1.0000, -1.0000, -1.0000
      fillColor [set every frame] = $tick_colorE
      forceEndRoutine = False
      letterHeight = 0.03
      pos [set every repeat] = (-0.5, y_locs[4])
      size = (0.05, 0.05)
      startVal [time (s)] = 0
      text = x
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      callback:
        tickE = True
        tick_colorE = "white"
    TextboxComponent textboxE
      alignment = center-left
      anchor = center-left
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.025
      pos [set every repeat] = (-0.45, y_locs[4])
      size = (1, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $optionE_msg
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    ButtonComponent buttonF
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 0.5
      color = -1.0000, -1.0000, -1.0000
      fillColor [set every frame] = $tick_colorF
      forceEndRoutine = False
      letterHeight = 0.03
      pos [set every repeat] = (-0.5, y_locs[5])
      size = (0.05, 0.05)
      startVal [time (s)] = 0
      text = x
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      callback:
        tickF = True
        tick_colorF = "white"
    TextboxComponent textboxF
      alignment = center-left
      anchor = center-left
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.025
      pos [set every repeat] = (-0.45, y_locs[5])
      size = (1, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $optionF_msg
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    ButtonComponent submit_button
      bold = True
      color = -1.0000, -1.0000, -1.0000
      fillColor = 0.6549, 0.6549, 0.6549
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.4)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text [set every repeat] = $submit_msg
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  Routine setup
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    CodeComponent setup_code
      Code Type = Py
      Begin Experiment:
        import numpy as np
        # General parameters
        n_targets = 5
        start_x = 0.0
        start_y = -0.4
        start_diameter = 0.09
        angles_deg = [-60, -30, 0, 30, 60]
        angles_rad = [np.deg2rad(a) for a in angles_deg]
        distance = 0.424 # calculated from Carla's 458 pixels

        # Define the diameters
        target_diameters = [0.01176, 0.02353, 0.05, 0.1, 0.20588]
        thisExp.addData("target_diameters", target_diameters)
        # Calculate Index of Difficulty
        IDs = []
        for target_diameter in target_diameters:
            target_radius = target_diameter / 2
            start_radius = start_diameter / 2
            A = distance + start_radius + target_radius
            ID = np.log2((2 * A) / target_diameter)
            ID = round(ID, 2)
            IDs.append(ID)
        print(IDs)
      Begin Routine:
        # Update target diameters if this is a practice or main task block
        if current_block in [1,3]:
            # moderate difficulties for practice blocks
            target_diameters = [0.03, 0.06, 0.09, 0.12, 0.15]
        else:
            # actual difficulties otherwise
            target_diameters = [0.01176, 0.02353, 0.05, 0.1, 0.20588]
        thisExp.addData("target_diameters", target_diameters)
        # Get the level from the trial conditions
        level_index = int(difficulty_index)  # difficulty_index is column from excel file
        target_diameter = target_diameters[level_index]
        # Calculate center-to-target distance for this target diameter
        center_to_target = (start_diameter / 2) + distance + (target_diameter / 2)
        # Calculate ID
        ID = np.log2((2 * center_to_target) / target_diameter)
        ID = np.repeat(round(ID, 2), 5) # because we have 5 targets and 5 movement times
        # Store positions and sizes
        target_positions = []
        target_sizes = []
        for theta in angles_rad:
            angle_corrected = theta + np.pi/2  # make 0 degrees point up
            x = start_x + center_to_target * np.cos(angle_corrected)
            y = start_y + center_to_target * np.sin(angle_corrected)
            target_positions.append((x, y))
            target_sizes.append((target_diameter, target_diameter))
        # Assign to components
        target_1_pos = target_positions[0]
        target_1_size = target_sizes[0]
        target_2_pos = target_positions[1]
        target_2_size = target_sizes[1]
        target_3_pos = target_positions[2]
        target_3_size = target_sizes[2]
        target_4_pos = target_positions[3]
        target_4_size = target_sizes[3]
        target_5_pos = target_positions[4]
        target_5_size = target_sizes[4]
    TextComponent press_space_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $adv_msg
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    PolygonComponent start_flag
      fillColor = 1.0000, 0.2941, -1.0000
      lineColor = 1.0000, 0.2941, -1.0000
      pos [set every repeat] = (start_x, start_y)
      shape = circle
      size [set every repeat] = (start_diameter, start_diameter)
      startVal [time (s)] = 0.0
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    ImageComponent flag_image
      image = images/flag.png
      pos [set every repeat] = (start_x, start_y)
      size [set every repeat] = (start_diameter-0.03, start_diameter-0.03)
      startVal [time (s)] = 0.0
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    KeyboardComponent setup_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine self_assess
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    CodeComponent self_assess_code
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
        back_pressed = False
        # fetch language localisation from excel sheet
        try:
            self_assess_question = eval(f"self_assess_question_{lang_code}")
            label_min = eval(f"label_min_{lang_code}")
            label_max = eval(f"label_max_{lang_code}")
        except NameError:
            self_assess_question = self_assess_question_EN
            label_min = label_min_EN
            label_max = label_max_EN
    ImageComponent imagery_icon
      image = images/imagery_icon.png
      pos = (0, 0.4)
      size = (0.12, 0.12)
      startVal [time (s)] = 0.0
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    TextboxComponent self_assess_text
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      pos = (0, 0.18)
      size = (0.9, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $self_assess_question
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    SliderComponent slider
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      fillColor = -1.0000, 0.4980, 1.0000
      forceEndRoutine = False
      granularity = 1
      labels = (0,'','','','','','','','','',10)
      letterHeight = 0.05
      pos = (0, -0.05)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0,1,2,3,4,5,6,7,8,9,10)
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    TextboxComponent label_0
      anchor = bottom-center
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (-0.5, -0.35)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $label_min
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    TextboxComponent label_10
      anchor = bottom-center
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (0.5, -0.35)
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $label_max
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    ButtonComponent next_button
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      callback = button_pressed = "next"
      color = 0.2941, -0.6706, -0.6706
      fillColor = 0.6549, 0.6549, 0.6549
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.45, -0.4)
      size = (0.3, 0.1)
      startVal [condition] = $slider.rating
      text [set every repeat] = $next_msg
      timeRelativeTo = routine
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    ButtonComponent back_button
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      callback = button_pressed = "back"
      color = 0.2941, -0.6706, -0.6706
      fillColor = 0.6549, 0.6549, 0.6549
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (-0.45, -0.4)
      size = (0.3, 0.1)
      startVal [condition] = $slider.rating
      text [set every repeat] = $back_msg
      timeRelativeTo = routine
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    TextComponent double_tap_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $double_tap_msg
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  Routine controller
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    CodeComponent controller_code
      Code Type = Auto->JS
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      Begin Experiment:
        cur_row = 0
        button_pressed = "none"
        show_self_assess = 1
        max_slides = 13   # length of rows in Excel - 1!!!
      Begin Routine:
        if button_pressed == "next":
            cur_row += 1
        elif button_pressed == "back":
            cur_row -= 1

        button_pressed = "none"

        if cur_row < 0:
            cur_row = 0

        if cur_row > max_slides:
            back_forth_loop.finished = True
            show_self_assess = 0
            cur_row = max_slides
  Routine processing
    RoutineSettingsComponent processing
      saveStartStop = False
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    CodeComponent processing_code
      Code Type = Py
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      Begin Routine:
        import matplotlib.pyplot as plt
        import numpy as np
        # Convert lists to arrays
        x = np.array(index_difficulties)
        y = np.array(movement_times)  # we can do y = log(y) if we want log-transformed
        # How many practice trials and main block trials do we have?
        practice_block_trials = practice_reps * n_IDs * n_targets
        main_block_trials = main_blocks_reps * n_IDs * n_targets
        # Remove practice trials based on order
        x_exe = x_ima = y_exe = y_ima = None
        if order == "0":  # Execution first
            x_exe = x[practice_block_trials : practice_block_trials + main_block_trials]
            y_exe = y[practice_block_trials : practice_block_trials + main_block_trials]
            x_ima = x[2 * practice_block_trials + main_block_trials :]
            y_ima = y[2 * practice_block_trials + main_block_trials :]
        elif order == "1":  # Imagery first
            x_ima = x[practice_block_trials : practice_block_trials + main_block_trials]
            y_ima = y[practice_block_trials : practice_block_trials + main_block_trials]
            x_exe = x[2 * practice_block_trials + main_block_trials :]
            y_exe = y[2 * practice_block_trials + main_block_trials :]
        # ---------- EXECUTION ----------
        # Lineal fit
        slope_exe, intercept_exe = np.polyfit(x_exe, y_exe, 1)
        pred_exe = slope_exe * x_exe + intercept_exe
        # Real (raw) data
        plt.scatter(x_exe, y_exe, color='blue', label='Execution block')
        # Fit line
        plt.plot(x_exe, pred_exe, color='blue', linestyle='-',
                 label=f'Fit: y={intercept_exe:.2f}+{slope_exe:.2f}x')
        # Averages by Index of Difficulty
        unique_ids_exe = np.unique(x_exe)
        means_exe = [np.mean(y_exe[x_exe == i]) for i in unique_ids_exe]
        # Line for raw data
        plt.plot(unique_ids_exe, means_exe, color='blue', linestyle='--', marker='s', label='Raw data')
        # ---------- IMAGERY ----------
        # Lineal fit
        slope_ima, intercept_ima = np.polyfit(x_ima, y_ima, 1)
        pred_ima = slope_ima * x_ima + intercept_ima
        # Real (raw) data
        plt.scatter(x_ima, y_ima, color='orange', label='Imagery block')
        # Fit line
        plt.plot(x_ima, pred_ima, color='orange', linestyle='-',
                 label=f'Fit: y={intercept_ima:.2f}+{slope_ima:.2f}x')
        # Averages by ID
        unique_ids_ima = np.unique(x_ima)
        means_ima = [np.mean(y_ima[x_ima == i]) for i in unique_ids_ima]
        # Line for raw data
        plt.plot(unique_ids_ima, means_ima, color='orange', linestyle='--', marker='s', label='Raw data')
        # ---------- Plot style ----------
        plt.xlabel("Index of Difficulty (ID)")
        plt.ylabel("Forward reaching time (s)")
        plt.title(f"Participant {expInfo['participant']} - Execution and Imagery results")
        plt.legend()
        plt.tight_layout()
        # Save plot
        plt.savefig(f"plots/regression_plot_{expInfo['participant']}.png")
        # ---------- Save to output ------------
        # Save coefficients to output
        thisExp.addData("slope_exe", slope_exe)
        thisExp.addData("intercept_exe", intercept_exe)
        thisExp.addData("slope_ima", slope_ima)
        thisExp.addData("intercept_ima", intercept_ima)
  Routine countdown
    RoutineSettingsComponent countdown
      stopVal [duration (s)] = 3
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    PolygonComponent start_count
      fillColor = 1.0000, -0.4588, -1.0000
      lineColor = 1.0000, -0.2235, -0.4431
      pos [set every repeat] = (start_x, start_y)
      shape = circle
      size [set every repeat] = (start_diameter, start_diameter)
      startVal [time (s)] = 0.0
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    PolygonComponent target_1_count
      fillColor [set every frame] = $target_1_color
      lineColor [set every frame] = $target_1_color
      pos [set every repeat] = target_5_pos
      shape = circle
      size [set every repeat] = target_1_size
      startVal [time (s)] = 0.0
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    PolygonComponent target_2_count
      fillColor [set every frame] = $target_2_color
      lineColor [set every frame] = $target_2_color
      pos [set every repeat] = target_4_pos
      shape = circle
      size [set every repeat] = target_2_size
      startVal [time (s)] = 0.0
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    PolygonComponent target_3_count
      fillColor [set every frame] = $target_3_color
      lineColor [set every frame] = $target_3_color
      pos [set every repeat] = target_3_pos
      shape = circle
      size [set every repeat] = target_3_size
      startVal [time (s)] = 0.0
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    PolygonComponent target_4_count
      fillColor [set every frame] = $target_4_color
      lineColor [set every frame] = $target_4_color
      pos [set every repeat] = target_2_pos
      shape = circle
      size [set every repeat] = target_4_size
      startVal [time (s)] = 0.0
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    PolygonComponent target_5_count
      fillColor [set every frame] = $target_5_color
      lineColor [set every frame] = $target_5_color
      pos [set every repeat] = target_1_pos
      shape = circle
      size [set every repeat] = target_5_size
      startVal [time (s)] = 0.0
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    PolygonComponent rect_countdown
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      opacity = 0.4
      pos = (0, -0.08)
      shape = rectangle
      size = (1.3, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent countdown_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.2
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent countdown_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.2
      pos = (0, -0.2)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent countdown_1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.2
      pos = (0, -0.2)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 1
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  Routine introduction
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    TextComponent intro_text1
      color [set every repeat] = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $intro_msg
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    ImageComponent stylus_image
      image = images/stylus_exe.png
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent intro_text2
      color [set every repeat] = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $sat_msg
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    TextComponent adv_text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.045
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $adv_msg
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    KeyboardComponent intro_adv_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine animation
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    MovieComponent animation_video_2
      No audio = True
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = images/execution_animation.mp4
      pos [set every repeat] = (0, 0)
      size [set every repeat] = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine check_fb
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    CodeComponent fb_check_code
      Code Type = Auto->JS
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      Begin Routine:
        if response_correct == True:
            check_fb_msg = check_correct_msg
            color_text = "green"
            corr_incorr_msg = correct_msg
        else:
            check_fb_msg = check_incorrect_msg
            color_text = "red"
            corr_incorr_msg = incorrect_msg
      End Routine:
        if response_correct == True:
            comp_check_loop.finished = True
    TextComponent corr_incorr_fb
      color [set every repeat] = $color_text
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $corr_incorr_msg
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    TextComponent check_fb_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $check_fb_msg
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    TextComponent check_fb_adv_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 2
      text [set every repeat] = $adv_msg
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    KeyboardComponent check_fb_adv_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
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  Routine reminder
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    CodeComponent reminder_code
      Code Type = Auto->JS
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      Begin Routine:
        if inst_file == "instructions_execution.xlsx":
            reminder_main_msg = reminder_exe_msg
        else:
            reminder_main_msg = reminder_ima_msg
    TextComponent reminder_title
      color = -1.0000, 0.4980, 1.0000
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $reminder_msg
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    TextComponent reminder_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $reminder_main_msg
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    TextComponent reminder_adv_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 2
      text [set every repeat] = $adv_msg
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    KeyboardComponent reminder_adv_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
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  CounterbalanceRoutine counterbalance
    endExperimentOnDepletion = True
    nGroups = 2
    nReps = 80
    nSlots = 1
    saveData = True
    saveRemaining = True
    specMode = uniform
  Routine demographics
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    CodeComponent demo_code
      Code Type = Auto->JS
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      Begin Routine:
        # make mouse visible
        win.mouseVisible = True
    TextComponent demographics_title
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.035
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $demographics_msg
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    TextComponent age_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0, 0.32)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $age_msg
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    TextboxComponent age_textbox
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      editable = True
      letterHeight = 0.03
      placeholder = ...
      pos = (0, 0.25)
      saveStartStop = False
      size = (0.12, 0.07)
      startVal [time (s)] = 0.0
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    TextComponent gender_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $gender_msg
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    SliderComponent gender_slider
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      fillColor = 0.4824, 0.4353, -0.1608
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('', '', '', '', '', '')
      letterHeight = 0.025
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6)
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    TextboxComponent label_female
      anchor = bottom-center
      autoLog = False
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (-0.5, -0.1)
      saveStartStop = False
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $f_msg
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    TextboxComponent label_male
      anchor = bottom-center
      autoLog = False
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (-0.3, -0.1)
      saveStartStop = False
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $m_msg
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    TextboxComponent label_transgender
      anchor = bottom-center
      autoLog = False
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.0275
      lineSpacing = 0.8
      pos = (-0.1, -0.1)
      saveStartStop = False
      size = (0.18, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $tg_msg
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    TextboxComponent label_nonbinary
      anchor = bottom-center
      autoLog = False
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (0.1, -0.1)
      saveStartStop = False
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $nb_msg
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    TextboxComponent label_other
      anchor = bottom-center
      autoLog = False
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (0.3, -0.1)
      saveStartStop = False
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $o_msg
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    TextboxComponent label_prefer_not_say
      anchor = bottom-center
      autoLog = False
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (0.5, -0.1)
      saveStartStop = False
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $pns_msg
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    TextComponent laterality_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0, -0.27)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $laterality_msg
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    SliderComponent laterality_slider
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      fillColor = 0.4824, 0.4353, -0.1608
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('', '', '')
      letterHeight = 0.025
      pos = (0, -0.35)
      saveStartStop = False
      size = (0.5, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3)
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    TextboxComponent label_left
      anchor = bottom-center
      autoLog = False
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (-0.25, -0.45)
      saveStartStop = False
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $left_msg
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    TextboxComponent label_ambi
      anchor = bottom-center
      autoLog = False
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (0, -0.45)
      saveStartStop = False
      size = (0.2, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $ambi_msg
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    TextboxComponent label_right
      anchor = bottom-center
      autoLog = False
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      lineSpacing = 0.8
      pos = (0.25, -0.45)
      saveStartStop = False
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $right_msg
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    ButtonComponent next_button_2
      bold = True
      color = -1.0000, -1.0000, -1.0000
      fillColor = 0.6078, -0.2784, -0.2784
      forceEndRoutine = True
      letterHeight = 0.035
      pos = (0.53, -0.35)
      save = first click
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text [set every repeat] = $next_msg
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Flow
  CounterbalanceRoutine counterbalance
  Routine exp_settings
  LoopInitiator language_loop loopType="TrialHandler"
    conditionsFile = language_localiser.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'language': 'English', 'ISO_code': 'EN'},
      {'language': 'Spanish', 'ISO_code': 'ES'},
      {'language': 'French', 'ISO_code': 'FR'},
      {'language': 'German', 'ISO_code': 'DE'}]
    Routine language_settings
  LoopTerminator language_loop
  Routine welcome
  Routine demographics
  Routine introduction
  LoopInitiator test_loop loopType="TrialHandler"
    loopType = random
    nReps = practice_taps
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    Routine test_screen
  LoopTerminator test_loop
  Routine fb_test
  LoopInitiator blocks_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = n_blocks
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    Routine start_block
    LoopInitiator comp_check_loop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = show_inst
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      LoopInitiator instructions_loop loopType="TrialHandler"
        conditionsFile = $inst_file
        isTrials = False
        loopType = sequential
        nReps = 1
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        conditions:
          [{'inst_pics': 'images/task_setup.png', 'image_w': 0.6, 'image_h': 0.5, 'image_x': 0, 'image_y': -0.25, 'text_x': 0, 'text_y': 0.2, 'video': 'no', 'inst_msg_EN': 'Here you see a symbolic representation of the task to be completed in this block.\nThe task consists of two parts:\n\n1. Alternately tap the red circle and one of the five gray circles using the stylus.\nWork your way through the gray circles from left to right, and start and end with the red circle.\nIt is important that you comply WITH THIS SPECIFIED ORDER.\n\n2. SIMULTANEOUSLY with each tap, press the SPACE bar with the index fing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,
          {'inst_pics': 'images/stylus_exe.png', 'image_w': 0.5, 'image_h': 0.1, 'image_x': 0, 'image_y': -0.25, 'text_x': 0, 'text_y': 0, 'video': 'no', 'inst_msg_EN': 'It is important that you actually hit the circles with the stylus. As in the task before, it does not matter where exactly you hit the circles (e.g., in the middle or at the edge).\n\nTry to perform the movements as QUICKLY and ACCURATELY as possible.\n\nBoth the time and the accuracy (actually hitting the circles), together with the simultaneous key press, determine your performance.', 'inst_msg_ES': 's'},
          {'inst_pics': 'images/task_setup.png', 'image_w': 0, 'image_h': 0, 'image_x': 0, 'image_y': 0, 'text_x': 0, 'text_y': 0.4, 'video': 'yes', 'inst_msg_EN': 'Please watch this animation that outlines the task in this block', 'inst_msg_ES': 's'},
          {'inst_pics': 'images/placeholder.png', 'image_w': 0, 'image_h': 0, 'image_x': 0, 'image_y': 0, 'text_x': 0, 'text_y': 0, 'video': 'no', 'inst_msg_EN': 'As soon as you start the trial, a countdown will appear. You will then already see the circles you are supposed to tap. The size of the gray circles may vary from trial to trial.\n\nBegin promptly as soon as the countdown has disappeared.', 'inst_msg_ES': 's'}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
        Routine instructions
      LoopTerminator instructions_loop
      Routine comp_check
      Routine check_fb
    LoopTerminator comp_check_loop
    Routine reminder
    LoopInitiator trials_loop loopType="TrialHandler"
      conditionsFile = conditions.xlsx
      loopType = random
      nReps = reps_per_block
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      conditions:
        [{'difficulty_index': 0},
        {'difficulty_index': 1},
        {'difficulty_index': 2},
        {'difficulty_index': 3},
        {'difficulty_index': 4}]
      Routine setup
      Routine countdown
      Routine trial
      Routine blank
      Routine fb
    LoopTerminator trials_loop
  LoopTerminator blocks_loop
  Routine processing
  Routine bye
